<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q8="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q2="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q9="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders" xmlns:q3="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys" xmlns:q7="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q4="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q6="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="q1:PythonTransform">
        <q1:Script>import os
import clr
clr.AddReference("Bonsai.System")
from Bonsai.IO import PathHelper, PathSuffix

filename = 'out.avi'

def process(value):
  path = PathHelper.AppendSuffix(filename, PathSuffix.FileCount)
  os.system(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 1600x1200 -r 120 -pix_fmt rgb24 -i \\.\pipe\video -c:v h264_nvenc -preset fast -vb 20M output.avi'.format(path))</q1:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:MatrixWriter">
          <q2:Path>sync.bin</q2:Path>
          <q2:Suffix>None</q2:Suffix>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:Layout>ColumnMajor</q2:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:MatrixWriter">
          <q2:Path>timestamp.bin</q2:Path>
          <q2:Suffix>None</q2:Suffix>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:Layout>ColumnMajor</q2:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.BufferCapacity</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT5S</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.TtlIn</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:Rhd2000EvalBoard">
          <q3:BitFileName>rhd2000.bit</q3:BitFileName>
          <q3:SampleRate>SampleRate30000Hz</q3:SampleRate>
          <q3:FastSettle>false</q3:FastSettle>
          <q3:LowerBandwidth>0.1</q3:LowerBandwidth>
          <q3:UpperBandwidth>7500</q3:UpperBandwidth>
          <q3:DspCutoffFrequency>1</q3:DspCutoffFrequency>
          <q3:DspEnabled>true</q3:DspEnabled>
          <q3:CableDelayA xsi:nil="true" />
          <q3:CableDelayB xsi:nil="true" />
          <q3:CableDelayC xsi:nil="true" />
          <q3:CableDelayD xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DrawMesh">
          <q4:ShaderName>Trigger</q4:ShaderName>
          <q4:MeshName>background</q4:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:ImageWriter">
          <q5:Path>\\.\pipe\video</q5:Path>
          <q5:Suffix>None</q5:Suffix>
          <q5:Overwrite>false</q5:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DrawMesh">
          <q4:ShaderName>WhiteBackground</q4:ShaderName>
          <q4:MeshName>background</q4:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:RenderFrame" />
      </Expression>
      <Expression xsi:type="q6:CsvWriter">
        <q6:FileName>counter.csv</q6:FileName>
        <q6:Append>false</q6:Append>
        <q6:Overwrite>true</q6:Overwrite>
        <q6:Suffix>None</q6:Suffix>
        <q6:IncludeHeader>false</q6:IncludeHeader>
        <q6:Selector>Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter</q6:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:KeyDown">
          <q7:Filter>M</q7:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q8:FlyCapture">
          <q8:Index>0</q8:Index>
          <q8:ColorFormat>Rgb</q8:ColorFormat>
          <q8:ColorProcessing>NearestNeighbor</q8:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:KeyDown">
          <q7:Filter>S</q7:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowPropertyOfKey">
          <Value>Z</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.EventArgs.Key</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q9:KeyDown" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>4</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>16</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>20</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>9</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.MatrixWriter, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Ephys.Rhd2000EvalBoard, Bonsai.Ephys, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.15.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.15.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.WorkflowProperty`1[[OpenTK.Input.Key, OpenTK, Version=1.1.0.0, Culture=neutral, PublicKeyToken=bad199fe84eb3df4]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Input.KeyDown, Bonsai.Shaders, Version=0.15.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>