<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q4="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q6="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
          <q1:ColorFormat>Bgr</q1:ColorFormat>
          <q1:ColorProcessing>NoColorProcessing</q1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:ConvertColor">
          <q2:Conversion>BayerRG2Bgr</q2:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value.Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Skip">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="q3:ExpressionTransform">
        <q3:Expression>int32(it)</q3:Expression>
      </Expression>
      <Expression xsi:type="q3:PythonTransform">
        <q3:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *
from System import Tuple

@returns(Tuple[IplImage,IplImage])
def process(value):
  red = IplImage(value.Size,value.Depth,1)
  green = IplImage(value.Size,value.Depth,1)
  CV.Split(value,None,green,red,None)
  return Tuple.Create(red,green)</q3:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>color.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>60</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DrawShader">
          <q4:ShaderName>YellowBall</q4:ShaderName>
          <q4:MeshName>sprite</q4:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DrawShader">
          <q4:ShaderName>RedBackground</q4:ShaderName>
          <q4:MeshName>background</q4:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Undistort">
          <q2:Alpha>0</q2:Alpha>
          <q2:ComputeOptimalMatrix>false</q2:ComputeOptimalMatrix>
          <q2:FocalLength>
            <q2:X>1000</q2:X>
            <q2:Y>1000</q2:Y>
          </q2:FocalLength>
          <q2:PrincipalPoint>
            <q2:X>321.5</q2:X>
            <q2:Y>256.5</q2:Y>
          </q2:PrincipalPoint>
          <q2:RadialDistortion>
            <q2:X>-0.3</q2:X>
            <q2:Y>0</q2:Y>
            <q2:Z>0</q2:Z>
          </q2:RadialDistortion>
          <q2:TangentialDistortion>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:TangentialDistortion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Crop">
          <q2:RegionOfInterest>
            <q2:X>153</q2:X>
            <q2:Y>84</q2:Y>
            <q2:Width>1286</q2:Width>
            <q2:Height>1026</q2:Height>
          </q2:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FindContours">
          <q2:Mode>External</q2:Mode>
          <q2:Method>ChainApproxNone</q2:Method>
          <q2:Offset>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:Offset>
          <q2:MinArea>200</q2:MinArea>
          <q2:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Threshold">
          <q2:ThresholdValue>18</q2:ThresholdValue>
          <q2:MaxValue>255</q2:MaxValue>
          <q2:ThresholdType>BinaryInv</q2:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:UpdateFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Threshold">
          <q2:ThresholdValue>84</q2:ThresholdValue>
          <q2:MaxValue>255</q2:MaxValue>
          <q2:ThresholdType>Binary</q2:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Resize">
          <q2:Size>
            <q2:Width>643</q2:Width>
            <q2:Height>513</q2:Height>
          </q2:Size>
          <q2:Interpolation>Linear</q2:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FindContours">
          <q2:Mode>External</q2:Mode>
          <q2:Method>ChainApproxNone</q2:Method>
          <q2:Offset>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:Offset>
          <q2:MinArea>200</q2:MinArea>
          <q2:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Undistort">
          <q2:Alpha>0</q2:Alpha>
          <q2:ComputeOptimalMatrix>false</q2:ComputeOptimalMatrix>
          <q2:FocalLength>
            <q2:X>1000</q2:X>
            <q2:Y>1000</q2:Y>
          </q2:FocalLength>
          <q2:PrincipalPoint>
            <q2:X>321.5</q2:X>
            <q2:Y>256.5</q2:Y>
          </q2:PrincipalPoint>
          <q2:RadialDistortion>
            <q2:X>-0.3</q2:X>
            <q2:Y>0</q2:Y>
            <q2:Z>0</q2:Z>
          </q2:RadialDistortion>
          <q2:TangentialDistortion>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:TangentialDistortion>
        </Combinator>
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>tracking.csv</q5:FileName>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>true</q5:Overwrite>
        <q5:Suffix>None</q5:Suffix>
        <q5:IncludeHeader>false</q5:IncludeHeader>
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>stimulus.csv</q5:FileName>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>true</q5:Overwrite>
        <q5:Suffix>None</q5:Suffix>
        <q5:IncludeHeader>false</q5:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:AnalogOutput">
          <q6:PortName>COM4</q6:PortName>
          <q6:Pin>5</q6:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:AnalogOutput">
          <q6:PortName>COM6</q6:PortName>
          <q6:Pin>5</q6:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>color.csv</q5:FileName>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>true</q5:Overwrite>
        <q5:Suffix>None</q5:Suffix>
        <q5:IncludeHeader>false</q5:IncludeHeader>
        <q5:Selector>Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter</q5:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Flip">
          <q2:Mode>Vertical</q2:Mode>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>33</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>35</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>5</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>29</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>34</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>34</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>34</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>35</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertColor, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawShader, Bonsai.Shaders, Version=0.14.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Undistort, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.14.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Resize, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.AnalogOutput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Flip, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>