<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0-alpha2">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:q4="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q6="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
          <q1:ColorProcessing>NoColorProcessing</q1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:ConvertColor">
          <q2:Conversion>BayerRG2Gray</q2:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value.Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Skip">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="q3:ExpressionTransform">
        <q3:Expression>int32(it)</q3:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>gray.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>60</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DrawShader">
          <q4:ShaderName>WhiteBall</q4:ShaderName>
          <q4:MeshName>sprite</q4:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DrawShader">
          <q4:ShaderName>GrayBackground</q4:ShaderName>
          <q4:MeshName>background</q4:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Crop">
          <q2:RegionOfInterest>
            <q2:X>153</q2:X>
            <q2:Y>84</q2:Y>
            <q2:Width>1286</q2:Width>
            <q2:Height>1026</q2:Height>
          </q2:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FindContours">
          <q2:Mode>External</q2:Mode>
          <q2:Method>ChainApproxNone</q2:Method>
          <q2:Offset>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:Offset>
          <q2:MinArea>200</q2:MinArea>
          <q2:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Threshold">
          <q2:ThresholdValue>11</q2:ThresholdValue>
          <q2:MaxValue>255</q2:MaxValue>
          <q2:ThresholdType>BinaryInv</q2:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:AnalogOutput">
          <q5:PortName>COM4</q5:PortName>
          <q5:Pin>5</q5:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Undistort">
          <q2:Alpha>0</q2:Alpha>
          <q2:ComputeOptimalMatrix>false</q2:ComputeOptimalMatrix>
          <q2:FocalLength>
            <q2:X>1000</q2:X>
            <q2:Y>1000</q2:Y>
          </q2:FocalLength>
          <q2:PrincipalPoint>
            <q2:X>321.5</q2:X>
            <q2:Y>256.5</q2:Y>
          </q2:PrincipalPoint>
          <q2:RadialDistortion>
            <q2:X>-0.3</q2:X>
            <q2:Y>0</q2:Y>
            <q2:Z>0</q2:Z>
          </q2:RadialDistortion>
          <q2:TangentialDistortion>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:TangentialDistortion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Threshold">
          <q2:ThresholdValue>106</q2:ThresholdValue>
          <q2:MaxValue>255</q2:MaxValue>
          <q2:ThresholdType>Binary</q2:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Resize">
          <q2:Size>
            <q2:Width>643</q2:Width>
            <q2:Height>513</q2:Height>
          </q2:Size>
          <q2:Interpolation>Linear</q2:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FindContours">
          <q2:Mode>External</q2:Mode>
          <q2:Method>ChainApproxNone</q2:Method>
          <q2:Offset>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:Offset>
          <q2:MinArea>200</q2:MinArea>
          <q2:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:AnalogOutput">
          <q5:PortName>COM6</q5:PortName>
          <q5:Pin>5</q5:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="q6:CsvWriter">
        <q6:FileName>tracking.csv</q6:FileName>
        <q6:Append>false</q6:Append>
        <q6:Overwrite>true</q6:Overwrite>
        <q6:Suffix>None</q6:Suffix>
        <q6:IncludeHeader>false</q6:IncludeHeader>
      </Expression>
      <Expression xsi:type="q6:CsvWriter">
        <q6:FileName>stimulus.csv</q6:FileName>
        <q6:Append>false</q6:Append>
        <q6:Overwrite>true</q6:Overwrite>
        <q6:Suffix>None</q6:Suffix>
        <q6:IncludeHeader>false</q6:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="q6:CsvWriter">
        <q6:FileName>gray.csv</q6:FileName>
        <q6:Append>false</q6:Append>
        <q6:Overwrite>true</q6:Overwrite>
        <q6:Suffix>None</q6:Suffix>
        <q6:IncludeHeader>false</q6:IncludeHeader>
        <q6:Selector>Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter</q6:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Flip">
          <q2:Mode>Vertical</q2:Mode>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>30</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>5</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>29</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>31</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertColor, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawShader, Bonsai.Shaders, Version=0.12.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.12.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.AnalogOutput, Bonsai.Arduino, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Undistort, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Resize, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Flip, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>