WorkflowBuilder(Version=2.3.0)
Bonsai.Shaders.UpdateFrame
-> Bonsai.Shaders.DrawShader(ShaderName=Background, MeshName=background)

Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=left_poke_activity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")

Bonsai.Arduino.DigitalInput(PortName=COM12, Pin=6)
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=right_poke_activity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")

Bonsai.PointGrey.FlyCapture(Index=0, ColorFormat=Bgr, ColorProcessing=NoColorProcessing)
-> Timestamp => #9
-> Bonsai.IO.CsvWriter
  FileName=color.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false
  Selector="Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter"
-> MemberSelector(Selector=Source.Value.Image)
-> Bonsai.Vision.Flip(Mode=Vertical)
-> Bonsai.Vision.ConvertColor(Conversion=BayerRG2Bgr)
-> Bonsai.Vision.VideoWriter
  FileName=color.avi
  Suffix=None
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=60
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> NestedWorkflow Tracking
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=153, Y=84, Width=1286, Height=1026))
    -> Bonsai.Vision.Resize(Size(Width=643, Height=513), Interpolation=Linear)
    -> Bonsai.Scripting.PythonTransform
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *

        @returns(IplImage)
        def process(value):
          red = IplImage(value.Size,value.Depth,1)
          CV.Split(value,None,None,red,None)
          return red
    -> Bonsai.Vision.Undistort
      Alpha=0
      ComputeOptimalMatrix=false
      FocalLength(X=1000, Y=1000)
      PrincipalPoint(X=321.5, Y=256.5)
      RadialDistortion(X=-0.3, Y=0, Z=0)
      TangentialDistortion(X=0, Y=0)
    -> Bonsai.Vision.Threshold(ThresholdValue=30, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=20, MaxArea=nil)
    -> Bonsai.Vision.ApproximatePolygon(Method=DouglasPeucker, Eps=2, Recursive=false)
    -> Bonsai.Vision.BinaryRegionAnalysis => #1
    -> Bonsai.Vision.LargestBinaryRegion => #0
    #1 -> MemberSelector(Selector=Source.ImageSize) => #10
    #0, #10 -> Zip
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=tracking.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector=Source.Item1)
-> InputMapping(Selector=Source.Item1.Contour, ImageSize(selector=Source.Item2))
-> Bonsai.Videogame.CreateContourTriMesh(ImageSize(Width=643, Height=513), Depth=10, FlipContour=Vertical)
-> Bonsai.Shaders.SampleOnUpdateFrame
-> WindowWorkflow CreateCollider
    WorkflowInput Source1
    -> Condition CheckNotNull => #4
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it != null
        -> WorkflowOutput
    SubscribeSubject Space => #3
    #4, #3 -> Zip
    -> InputMapping(Selector=Source.Item2, Data(selector=Source.Item1))
    -> Bonsai.Physics.Collision.CreateTriMesh(Enabled=true, CategoryBits=1, CollideBits=nil, Position=nil, Orientation=nil)
    -> WorkflowOutput
-> Switch
#9 -> Take(Count=1)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    Timestamp as Timestamp,
    "SessionStart" as Name
    )
-> BehaviorSubject Events

Bonsai.Shaders.Timer(DueTime=PT0S)
-> SelectMany LeftTrial
    WorkflowInput Source1
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp => #2
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftTrialStart" as Name
            )
        #2 -> Bonsai.Scripting.ExpressionTransform => #4
          Expression:
            new(
            Timestamp as Timestamp,
            "BallOn" as Name
            )
        #3, #4 -> Merge
        -> MulticastSubject Events
        -> WorkflowOutput
    -> SelectMany Ball
        WorkflowInput Source1

        Bonsai.Shaders.UpdateFrame
        -> FloatProperty(Value=0.1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=smoothness, ShaderName=Ball) => #3
        SubscribeSubject Warp => #7
        #3, #7 -> CombineLatest
        -> MemberSelector(Selector=Source.Item2)
        -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Ball) => #6
        SubscribeSubject Space => #12
        SubscribeSubject Random
        -> Bonsai.Videogame.RandomPosition(Minimum(X=-0.9, Y=-0.9, Z=0), Maximum(X=0.9, Y=0.9, Z=0))
        -> Sink RecordStimulus
            WorkflowInput Source1
            -> Timestamp
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Timestamp as Timestamp,
                "Position"+Value.ToString() as Name
                )
            -> MulticastSubject Events
            -> WorkflowOutput
        -> ExternalizedPropertyOfNullableOfVector3CreateSphere(MemberName=Position, Value(X=0, Y=0, Z=0)) => #25
        #12, #25 -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=2, CollideBits=1, Position(X=0.44537254718382491, Y=0.74692664828474, Z=0), Orientation(W=1, X=0, Y=0, Z=0), Radius=0.0375) => #13
        -> Bonsai.Scripting.ExpressionTransform => #14
          Expression: single(Radius*2)
        #6, #14 -> CombineLatest
        -> MemberSelector(Selector="Source.Item2,Source.Item2")
        -> Bonsai.Shaders.UpdateUniform(UniformName=scale, ShaderName=Ball) => #17
        #13 -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=true) => #18
        #13 -> Bonsai.Scripting.ExpressionTransform => #24
          Expression:
            new(
            single(Position.X) as x,
            single(Position.Y) as y)
        #17, #24 -> CombineLatest
        -> MemberSelector(Selector="Source.Item2.x,Source.Item2.y")
        -> Bonsai.Shaders.UpdateUniform(UniformName=shift, ShaderName=Ball)
        -> Bonsai.Shaders.DrawShader(ShaderName=Ball, MeshName=sprite) => #5
        #5, #18 -> TakeUntil
        -> LastOrDefault
        -> WorkflowOutput
    -> Sink RecordEvent => #13
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftPokeAvailable" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> NestedWorkflow LedOn
        WorkflowInput Source1
        -> IntProperty(Value=5)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany BeamBreak
        Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
        -> Take(Count=1)
        -> Unit
        -> WorkflowOutput
    -> Sink RecordEvent => #10
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftBeamBreak" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    #13 -> SelectMany AvailabilityTone => #7
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=nil)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> Last
        -> Unit
        -> WorkflowOutput
    #10, #7 -> Amb
    -> NestedWorkflow LedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> Last
        -> WorkflowOutput
    -> SelectMany DeliverReward
        WorkflowInput Source1
        -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=15)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=2)
        -> Last
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftTrialEnd" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany RightTrial
    WorkflowInput Source1
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp => #2
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression:
            new(
            Timestamp as Timestamp,
            "RightTrialStart" as Name
            )
        #2 -> Bonsai.Scripting.ExpressionTransform => #4
          Expression:
            new(
            Timestamp as Timestamp,
            "BallOn" as Name
            )
        #3, #4 -> Merge
        -> MulticastSubject Events
        -> WorkflowOutput
    -> SelectMany Ball
        WorkflowInput Source1

        Bonsai.Shaders.UpdateFrame
        -> FloatProperty(Value=0.1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=smoothness, ShaderName=Ball) => #3
        SubscribeSubject Warp => #7
        #3, #7 -> CombineLatest
        -> MemberSelector(Selector=Source.Item2)
        -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Ball) => #6
        SubscribeSubject Space => #12
        SubscribeSubject Random
        -> Bonsai.Videogame.RandomPosition(Minimum(X=-0.9, Y=-0.9, Z=0), Maximum(X=0.9, Y=0.9, Z=0))
        -> Sink RecordStimulus
            WorkflowInput Source1
            -> Timestamp
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Timestamp as Timestamp,
                "Position"+Value.ToString() as Name
                )
            -> MulticastSubject Events
            -> WorkflowOutput
        -> ExternalizedPropertyOfNullableOfVector3CreateSphere(MemberName=Position, Value(X=0, Y=0, Z=0)) => #25
        #12, #25 -> Bonsai.Physics.Collision.CreateSphere => #13
          Enabled=true
          CategoryBits=2
          CollideBits=1
          Position(X=0.21301222690987032, Y=-0.80919448682535189, Z=0)
          Orientation(W=1, X=0, Y=0, Z=0)
          Radius=0.0375
        -> Bonsai.Scripting.ExpressionTransform => #14
          Expression: single(Radius*2)
        #6, #14 -> CombineLatest
        -> MemberSelector(Selector="Source.Item2,Source.Item2")
        -> Bonsai.Shaders.UpdateUniform(UniformName=scale, ShaderName=Ball) => #17
        #13 -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=true) => #18
        #13 -> Bonsai.Scripting.ExpressionTransform => #24
          Expression:
            new(
            single(Position.X) as x,
            single(Position.Y) as y)
        #17, #24 -> CombineLatest
        -> MemberSelector(Selector="Source.Item2.x,Source.Item2.y")
        -> Bonsai.Shaders.UpdateUniform(UniformName=shift, ShaderName=Ball)
        -> Bonsai.Shaders.DrawShader(ShaderName=Ball, MeshName=sprite) => #5
        #5, #18 -> TakeUntil
        -> LastOrDefault
        -> WorkflowOutput
    -> Sink RecordEvent => #13
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "RightPokeAvailable" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> NestedWorkflow LedOn
        WorkflowInput Source1
        -> IntProperty(Value=5)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=5)
        -> WorkflowOutput
    -> SelectMany BeamBreak
        Bonsai.Arduino.DigitalInput(PortName=COM4, Pin=6)
        -> Take(Count=1)
        -> Unit
        -> WorkflowOutput
    -> Sink RecordEvent => #10
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "RightBeamBreak" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    #13 -> SelectMany AvailabilityTone => #7
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=nil)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=3)
        -> Last
        -> Unit
        -> WorkflowOutput
    #10, #7 -> Amb
    -> NestedWorkflow LedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=5)
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=3)
        -> Last
        -> WorkflowOutput
    -> SelectMany DeliverReward
        WorkflowInput Source1
        -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=15)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=2)
        -> Last
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "RightTrialEnd" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> WorkflowOutput
-> Repeat => #17
Bonsai.Windows.Input.KeyDown(Filter=C) => #27
Bonsai.Shaders.Timer(DueTime=PT0S)
-> NestedWorkflow Shuttling
    WorkflowInput Source1
    -> SelectMany LeftTrial
        WorkflowInput Source1
        -> Sink RecordEvent => #8
            WorkflowInput Source1
            -> Timestamp => #2
            -> Bonsai.Scripting.ExpressionTransform => #3
              Expression:
                new(
                Timestamp as Timestamp,
                "LeftTrialStart" as Name
                )
            #2 -> Bonsai.Scripting.ExpressionTransform => #4
              Expression:
                new(
                Timestamp as Timestamp,
                "LeftPokeAvailable" as Name
                )
            #3, #4 -> Merge
            -> MulticastSubject Events
            -> WorkflowOutput
        -> NestedWorkflow LedOn
            WorkflowInput Source1
            -> IntProperty(Value=5)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
            -> Take(Count=1)
            -> Unit
            -> WorkflowOutput
        -> Sink RecordEvent => #10
            WorkflowInput Source1
            -> Timestamp
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Timestamp as Timestamp,
                "LeftBeamBreak" as Name
                )
            -> MulticastSubject Events
            -> WorkflowOutput
        #8 -> SelectMany AvailabilityTone => #7
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=nil)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
            -> Last
            -> Unit
            -> WorkflowOutput
        #10, #7 -> Amb
        -> NestedWorkflow LedOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
            -> WorkflowOutput
        -> SelectMany RewardTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
            -> Last
            -> WorkflowOutput
        -> SelectMany DeliverReward
            WorkflowInput Source1
            -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=15)
            -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=2)
            -> Last
            -> WorkflowOutput
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Timestamp
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Timestamp as Timestamp,
                "LeftTrialEnd" as Name
                )
            -> MulticastSubject Events
            -> WorkflowOutput
        -> WorkflowOutput
    -> Delay(DueTime=PT3S)
    -> SelectMany RightTrial
        WorkflowInput Source1
        -> Sink RecordEvent => #9
            WorkflowInput Source1
            -> Timestamp => #2
            -> Bonsai.Scripting.ExpressionTransform => #3
              Expression:
                new(
                Timestamp as Timestamp,
                "RightTrialStart" as Name
                )
            #2 -> Bonsai.Scripting.ExpressionTransform => #4
              Expression:
                new(
                Timestamp as Timestamp,
                "RightPokeAvailable" as Name
                )
            #3, #4 -> Merge
            -> MulticastSubject Events
            -> WorkflowOutput
        -> NestedWorkflow LedOn
            WorkflowInput Source1
            -> IntProperty(Value=5)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=5)
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM4, Pin=6)
            -> Take(Count=1)
            -> Unit
            -> WorkflowOutput
        -> Sink RecordEvent => #10
            WorkflowInput Source1
            -> Timestamp
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Timestamp as Timestamp,
                "RightBeamBreak" as Name
                )
            -> MulticastSubject Events
            -> WorkflowOutput
        #9 -> SelectMany AvailabilityTone => #7
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=nil)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=3)
            -> Last
            -> Unit
            -> WorkflowOutput
        #10, #7 -> Amb
        -> NestedWorkflow LedOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=5)
            -> WorkflowOutput
        -> SelectMany RewardTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=3)
            -> Last
            -> WorkflowOutput
        -> SelectMany DeliverReward
            WorkflowInput Source1
            -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=15)
            -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=2)
            -> Last
            -> WorkflowOutput
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Timestamp
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Timestamp as Timestamp,
                "RightTrialEnd" as Name
                )
            -> MulticastSubject Events
            -> WorkflowOutput
        -> WorkflowOutput
    -> Delay(DueTime=PT3S)
    -> WorkflowOutput
-> RepeatCount(Count=1)
-> DelaySubscription(DueTime=PT2S) => #47
#47, #17 -> Concat
-> Index
-> Bonsai.Scripting.ExpressionTransform => #31
  Expression: Index*2+2
#31, #27 -> TakeUntil
-> LastOrDefault
-> SelectMany EndSession
    WorkflowInput Source1
    -> NestedWorkflow LeftLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany LeftToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> WorkflowOutput
    -> NestedWorkflow RightLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=5)
        -> WorkflowOutput
    -> SelectMany RightToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=3)
        -> WorkflowOutput
    -> WorkflowOutput

SubscribeSubject Events
-> Bonsai.IO.CsvWriter(FileName=events.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
-> NestedWorkflow SaveEvents
    WorkflowInput Source1 => #0
    -> Condition LightPosition => #1
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.StartsWith("Position")
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform
      Script:
        from System import Tuple, DateTimeOffset

        start = 9

        @returns(Tuple[DateTimeOffset,str,str])
        def process(value):
          sub = value.Name.Substring(9).TrimEnd(')')
          pos = sub.Split(',')
          return Tuple.Create(value.Timestamp,pos[0],pos[1])
    -> Bonsai.IO.CsvWriter(FileName=events\LightPosition.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="")
    #0, #1 -> SkipUntil
    -> Condition LightTouched
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.EndsWith("PokeAvailable")
        -> WorkflowOutput
    -> Bonsai.IO.CsvWriter(FileName=events\LightTouched.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector=Source.Timestamp)
    #0 -> Condition TrialStart
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.EndsWith("TrialStart")
        -> WorkflowOutput
    -> Bonsai.IO.CsvWriter(FileName=events\TrialStart.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector=Source.Timestamp)
    #0 -> Condition BeamBreak
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.EndsWith("BeamBreak")
        -> WorkflowOutput
    -> Bonsai.IO.CsvWriter(FileName=events\BeamBreak.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector=Source.Timestamp)

Bonsai.Shaders.UpdateFrame
-> Bonsai.Physics.Collision.CreateHashSpace(MaxContacts=1, ExcludeConnected=true, CollisionHandlers="")
-> BehaviorSubject Space

Bonsai.Shaders.UpdateFrame
-> Take(Count=1)
-> Bonsai.Shaders.WarpPerspective
  Destination(Point2f(X=-0.7262397, Y=-0.965328455), Point2f(X=-0.7262397, Y=0.914233565), Point2f(X=0.7427686, Y=0.9087591), Point2f(X=0.7376033, Y=-0.961678863))
-> BehaviorSubject Warp

Bonsai.Videogame.RandomGenerator(Seed=nil)
-> BehaviorSubject Random
