<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0-alpha3">
  <Workflow xmlns:q10="clr-namespace:Bonsai.Videogame;assembly=Bonsai.Videogame" xmlns:q8="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q2="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q9="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q7="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q4="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q6="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawShader">
          <q1:ShaderName>Background</q1:ShaderName>
          <q1:MeshName>background</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalInput">
          <q2:PortName>COM6</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>left_poke_activity.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.Timestamp,Source.Value</q3:Selector>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>right_poke_activity.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.Timestamp,Source.Value</q3:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalInput">
          <q2:PortName>COM4</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:FlyCapture">
          <q4:Index>0</q4:Index>
          <q4:ColorProcessing>NoColorProcessing</q4:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>color.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter</q3:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:ConvertColor">
          <q5:Conversion>BayerRG2Bgr</q5:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:VideoWriter">
          <q5:FileName>color.avi</q5:FileName>
          <q5:Suffix>None</q5:Suffix>
          <q5:Buffered>true</q5:Buffered>
          <q5:Overwrite>false</q5:Overwrite>
          <q5:FourCC>FMP4</q5:FourCC>
          <q5:FrameRate>60</q5:FrameRate>
          <q5:FrameSize>
            <q5:Width>0</q5:Width>
            <q5:Height>0</q5:Height>
          </q5:FrameSize>
          <q5:ResizeInterpolation>NearestNeighbor</q5:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Tracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:FindContours">
                <q5:Mode>External</q5:Mode>
                <q5:Method>ChainApproxNone</q5:Method>
                <q5:Offset>
                  <q5:X>0</q5:X>
                  <q5:Y>0</q5:Y>
                </q5:Offset>
                <q5:MinArea>20</q5:MinArea>
                <q5:MaxArea>500</q5:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Threshold">
                <q5:ThresholdValue>60</q5:ThresholdValue>
                <q5:MaxValue>255</q5:MaxValue>
                <q5:ThresholdType>Binary</q5:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Undistort">
                <q5:Alpha>0</q5:Alpha>
                <q5:ComputeOptimalMatrix>false</q5:ComputeOptimalMatrix>
                <q5:FocalLength>
                  <q5:X>1000</q5:X>
                  <q5:Y>1000</q5:Y>
                </q5:FocalLength>
                <q5:PrincipalPoint>
                  <q5:X>321.5</q5:X>
                  <q5:Y>256.5</q5:Y>
                </q5:PrincipalPoint>
                <q5:RadialDistortion>
                  <q5:X>-0.3</q5:X>
                  <q5:Y>0</q5:Y>
                  <q5:Z>0</q5:Z>
                </q5:RadialDistortion>
                <q5:TangentialDistortion>
                  <q5:X>0</q5:X>
                  <q5:Y>0</q5:Y>
                </q5:TangentialDistortion>
              </Combinator>
            </Expression>
            <Expression xsi:type="q6:PythonTransform">
              <q6:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):
  red = IplImage(value.Size,value.Depth,1)
  CV.Split(value,None,None,red,None)
  return red</q6:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Resize">
                <q5:Size>
                  <q5:Width>643</q5:Width>
                  <q5:Height>513</q5:Height>
                </q5:Size>
                <q5:Interpolation>Linear</q5:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Crop">
                <q5:RegionOfInterest>
                  <q5:X>153</q5:X>
                  <q5:Y>84</q5:Y>
                  <q5:Width>1286</q5:Width>
                  <q5:Height>1026</q5:Height>
                </q5:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Centroid</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>tracking.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:Flip">
          <q5:Mode>Vertical</q5:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="q6:ExpressionTransform">
        <q6:Expression>new(
Timestamp as Timestamp,
"SessionStart" as Name
)</q6:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>events.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawShader">
          <q1:ShaderName>Trigger</q1:ShaderName>
          <q1:MeshName>background</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:Rhd2000EvalBoard">
          <q7:BitFileName>rhd2000.bit</q7:BitFileName>
          <q7:SampleRate>SampleRate30000Hz</q7:SampleRate>
          <q7:FastSettle>false</q7:FastSettle>
          <q7:LowerBandwidth>0.1</q7:LowerBandwidth>
          <q7:UpperBandwidth>7500</q7:UpperBandwidth>
          <q7:DspCutoffFrequency>1</q7:DspCutoffFrequency>
          <q7:DspEnabled>true</q7:DspEnabled>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.TtlIn</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Ephys</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.BufferCapacity</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q8:MatrixWriter">
          <q8:Path>amplifier.bin</q8:Path>
          <q8:Suffix>None</q8:Suffix>
          <q8:Overwrite>false</q8:Overwrite>
          <q8:Layout>ColumnMajor</q8:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q8:MatrixWriter">
          <q8:Path>sync.bin</q8:Path>
          <q8:Suffix>None</q8:Suffix>
          <q8:Overwrite>false</q8:Overwrite>
          <q8:Layout>ColumnMajor</q8:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Ephys</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q9:KeyDown">
          <q9:Filter>C</q9:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>EndSession</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="NestedWorkflow">
              <Name>RightLedOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM4</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>LeftLedOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>LeftToneOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>RightToneOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM4</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="LastOrDefault" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="q6:ExpressionTransform">
        <q6:Expression>Index*2+2</q6:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q9:KeyDown">
          <q9:Filter>C</q9:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Index" />
      </Expression>
      <Expression xsi:type="Sink">
        <Name>RecordEvent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="q6:ExpressionTransform">
              <q6:Expression>new(
Timestamp as Timestamp,
"LeftTrialStart" as Name
)</q6:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Events</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>RightTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="TakeWhile">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfDoubleLessThanBuilder">
                    <MemberName>Value</MemberName>
                    <Name>Duration</Name>
                    <Value>1</Value>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="NestedWorkflow">
              <Name>LedOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM4</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>5</Value>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>RewardTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM4</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q10:SquareWave">
                      <q10:Value>128</q10:Value>
                      <q10:Duration>PT0.05S</q10:Duration>
                      <q10:Period>PT0.1S</q10:Period>
                      <q10:Count>2</q10:Count>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>BeamBreak</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>1</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:DigitalInput">
                      <q2:PortName>COM4</q2:PortName>
                      <q2:Pin>6</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>1</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>LedOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM4</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>DeliverReward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:DigitalOutput">
                      <q2:PortName>COM4</q2:PortName>
                      <q2:Pin>2</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q10:WaterValve">
                      <q10:MillilitersPerSecond>0.06</q10:MillilitersPerSecond>
                      <q10:MicrolitersPerDelivery>15</q10:MicrolitersPerDelivery>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>AvailabilityTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q10:SquareWave">
                      <q10:Value>15</q10:Value>
                      <q10:Duration>PT0.1S</q10:Duration>
                      <q10:Period>PT0.2S</q10:Period>
                      <q10:Count xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM4</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Unit" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Amb" />
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"RightPokeAvailable" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"RightBeamBreak" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"RightTrialEnd" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="TakeWhile">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0.1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfDoubleLessThanBuilder">
                    <MemberName>Value</MemberName>
                    <Name>Duration</Name>
                    <Value>0.1</Value>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawShader">
                <q1:ShaderName>Flash</q1:ShaderName>
                <q1:MeshName>background</q1:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Accumulate" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.EventArgs.Time</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeLast">
                <Count>1</Count>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q9:KeyDown">
          <q9:Filter>B</q9:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>LeftTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeLast">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="NestedWorkflow">
              <Name>LedOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>RewardTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q10:SquareWave">
                      <q10:Value>128</q10:Value>
                      <q10:Duration>PT0.05S</q10:Duration>
                      <q10:Period>PT0.1S</q10:Period>
                      <q10:Count>2</q10:Count>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>BeamBreak</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>1</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:DigitalInput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>6</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>LedOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>DeliverReward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:DigitalOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>2</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q10:WaterValve">
                      <q10:MillilitersPerSecond>0.06</q10:MillilitersPerSecond>
                      <q10:MicrolitersPerDelivery>15</q10:MicrolitersPerDelivery>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>AvailabilityTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q10:SquareWave">
                      <q10:Value>15</q10:Value>
                      <q10:Duration>PT0.1S</q10:Duration>
                      <q10:Period>PT0.2S</q10:Period>
                      <q10:Count xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Unit" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"LeftPokeAvailable" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Amb" />
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"LeftBeamBreak" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"LeftTrialEnd" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawShader">
                <q1:ShaderName>Flash</q1:ShaderName>
                <q1:MeshName>background</q1:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Accumulate" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.EventArgs.Time</Selector>
            </Expression>
            <Expression xsi:type="TakeWhile">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0.1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfDoubleLessThanBuilder">
                    <MemberName>Value</MemberName>
                    <Name>Duration</Name>
                    <Value>0.1</Value>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="TakeWhile">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfDoubleLessThanBuilder">
                    <MemberName>Value</MemberName>
                    <Name>Duration</Name>
                    <Value>1</Value>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>RecordEvent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="q6:ExpressionTransform">
              <q6:Expression>new(
Timestamp as Timestamp,
"RightTrialStart" as Name
)</q6:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Events</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q9:KeyDown">
          <q9:Filter>A</q9:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Merge" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>SaveEvents</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>TrialStart</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>Name.EndsWith("TrialStart")</q6:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="q3:CsvWriter">
              <q3:FileName>events\TrialStart.csv</q3:FileName>
              <q3:Append>false</q3:Append>
              <q3:Overwrite>false</q3:Overwrite>
              <q3:Suffix>None</q3:Suffix>
              <q3:IncludeHeader>false</q3:IncludeHeader>
              <q3:Selector>Source.Timestamp</q3:Selector>
            </Expression>
            <Expression xsi:type="q3:CsvWriter">
              <q3:FileName>events\BeamBreak.csv</q3:FileName>
              <q3:Append>false</q3:Append>
              <q3:Overwrite>false</q3:Overwrite>
              <q3:Suffix>None</q3:Suffix>
              <q3:IncludeHeader>false</q3:IncludeHeader>
              <q3:Selector>Source.Timestamp</q3:Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>BeamBreak</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>Name.EndsWith("BeamBreak")</q6:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:AdcScale">
          <q7:AdcType>Electrode</q7:AdcType>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>33</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>47</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>29</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>48</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>31</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>33</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>35</From>
        <To>34</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>36</From>
        <To>35</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>37</From>
        <To>36</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>38</From>
        <To>36</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>39</From>
        <To>37</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>40</From>
        <To>43</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>41</From>
        <To>46</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>42</From>
        <To>44</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>43</From>
        <To>46</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>44</From>
        <To>41</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>45</From>
        <To>40</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>46</From>
        <To>39</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>48</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.12.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawShader, Bonsai.Shaders, Version=0.12.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.DigitalInput, Bonsai.Arduino, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertColor, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Undistort, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Resize, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Flip, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Ephys.Rhd2000EvalBoard, Bonsai.Ephys, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.MatrixWriter, Bonsai.Dsp, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.AnalogOutput, Bonsai.Arduino, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.LastOrDefault, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Index, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SinkBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.LessThanBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Double, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.LessThanBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.TakeWhileBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Last, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Videogame.SquareWave, Bonsai.Videogame, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.DigitalOutput, Bonsai.Arduino, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Videogame.WaterValve, Bonsai.Videogame, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Amb, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeLast, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Merge, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Ephys.AdcScale, Bonsai.Ephys, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>