<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q8="clr-namespace:Bonsai.Videogame;assembly=Bonsai.Videogame" xmlns:q2="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q7="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q4="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q6="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalInput">
          <q2:PortName>COM6</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>left_poke_activity.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.Timestamp,Source.Value</q3:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:FlyCapture">
          <q4:Index>0</q4:Index>
          <q4:ColorFormat>Rgb</q4:ColorFormat>
          <q4:ColorProcessing>NearestNeighbor</q4:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>video.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter</q3:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value.Image</Selector>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Tracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:FindContours">
                <q5:Mode>External</q5:Mode>
                <q5:Method>ChainApproxNone</q5:Method>
                <q5:Offset>
                  <q5:X>0</q5:X>
                  <q5:Y>0</q5:Y>
                </q5:Offset>
                <q5:MinArea>200</q5:MinArea>
                <q5:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Threshold">
                <q5:ThresholdValue>18</q5:ThresholdValue>
                <q5:MaxValue>255</q5:MaxValue>
                <q5:ThresholdType>BinaryInv</q5:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="q6:PythonTransform">
              <q6:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):
  green = IplImage(value.Size,value.Depth,1)
  CV.Split(value,None,green,None,None)
  return green</q6:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Centroid,Source.Contour</Selector>
            </Expression>
            <Expression xsi:type="q6:ExpressionTransform">
              <q6:Expression>new(
2 * Item1.Item1.X / Item2.Width - 1 as X,
2 * Item1.Item1.Y / Item2.Height - 1 as Y,
Item1.Item2 as Contour,
Item2 as ImageSize)</q6:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Size</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Undistort">
                <q5:Alpha>0</q5:Alpha>
                <q5:ComputeOptimalMatrix>false</q5:ComputeOptimalMatrix>
                <q5:FocalLength>
                  <q5:X>1000</q5:X>
                  <q5:Y>1000</q5:Y>
                </q5:FocalLength>
                <q5:PrincipalPoint>
                  <q5:X>317</q5:X>
                  <q5:Y>254</q5:Y>
                </q5:PrincipalPoint>
                <q5:RadialDistortion>
                  <q5:X>-0.3</q5:X>
                  <q5:Y>0</q5:Y>
                  <q5:Z>0</q5:Z>
                </q5:RadialDistortion>
                <q5:TangentialDistortion>
                  <q5:X>0</q5:X>
                  <q5:Y>-0.01</q5:Y>
                </q5:TangentialDistortion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Resize">
                <q5:Size>
                  <q5:Width>640</q5:Width>
                  <q5:Height>512</q5:Height>
                </q5:Size>
                <q5:Interpolation>Linear</q5:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Crop">
                <q5:RegionOfInterest>
                  <q5:X>164</q5:X>
                  <q5:Y>91</q5:Y>
                  <q5:Width>1280</q5:Width>
                  <q5:Height>1024</q5:Height>
                </q5:RegionOfInterest>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="q6:ExpressionTransform">
        <q6:Expression>new(
Timestamp as Timestamp,
"SessionStart" as Name
)</q6:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>events.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:KeyDown">
          <q7:Filter>Z</q7:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMesh">
          <q1:ShaderName>Background</q1:ShaderName>
          <q1:MeshName>background</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMesh">
          <q1:ShaderName>Trigger</q1:ShaderName>
          <q1:MeshName>background</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:ImageWriter">
          <q5:Path>\\.\pipe\video</q5:Path>
          <q5:Suffix>None</q5:Suffix>
          <q5:Overwrite>false</q5:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="q6:PythonTransform">
        <q6:Script>import os
import clr
clr.AddReference("Bonsai.System")
from Bonsai.IO import PathHelper, PathSuffix

filename = 'out.avi'

def process(value):
  path = PathHelper.AppendSuffix(filename, PathSuffix.FileCount)
  os.system(r'ffmpeg -f rawvideo -vcodec rawvideo -s 1600x1200 -r 120 -pix_fmt rgb24 -i \\.\pipe\video -c:v h264_nvenc -preset fast -vb 20M video.avi'.format(path))</q6:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT5S</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>tracking.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.X,Source.Y</q3:Selector>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>EndSession</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="NestedWorkflow">
              <Name>LeftLedOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>LeftToneOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="AsyncSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="LastOrDefault" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT3S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q8:RandomGenerator">
          <q8:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="q6:ExpressionTransform">
        <q6:Expression>Index*2+2</q6:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:KeyDown">
          <q7:Filter>C</q7:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Index" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Repeat" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>LeftTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="NestedWorkflow">
              <Name>LedOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>RewardTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q8:SquareWave">
                      <q8:Value>128</q8:Value>
                      <q8:Duration>PT0.05S</q8:Duration>
                      <q8:Period>PT0.1S</q8:Period>
                      <q8:Count>2</q8:Count>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>BeamBreak</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>1</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:DigitalInput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>6</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>LedOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>DeliverReward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:DigitalOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>2</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q8:WaterValve">
                      <q8:MillilitersPerSecond>0.06</q8:MillilitersPerSecond>
                      <q8:MicrolitersPerDelivery>15</q8:MicrolitersPerDelivery>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>AvailabilityTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q8:SquareWave">
                      <q8:Value>15</q8:Value>
                      <q8:Duration>PT0.1S</q8:Duration>
                      <q8:Period>PT0.2S</q8:Period>
                      <q8:Count xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Unit" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"LeftTrialStart" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"LeftPokeAvailable" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>5</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Amb" />
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"LeftBeamBreak" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
Timestamp as Timestamp,
"LeftTrialEnd" as Name
)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q8:ExponentialTimer">
          <q8:Mean>10000</q8:Mean>
          <q8:Offset>6000</q8:Offset>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>SaveEvents</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>LightPosition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>Name.StartsWith("Position")</q6:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>TrialStart</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>Name.EndsWith("TrialStart")</q6:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="q3:CsvWriter">
              <q3:FileName>events\LeftTrialStart.csv</q3:FileName>
              <q3:Append>false</q3:Append>
              <q3:Overwrite>false</q3:Overwrite>
              <q3:Suffix>None</q3:Suffix>
              <q3:IncludeHeader>false</q3:IncludeHeader>
              <q3:Selector>Source.Timestamp</q3:Selector>
            </Expression>
            <Expression xsi:type="q3:CsvWriter">
              <q3:FileName>events\LightTouched.csv</q3:FileName>
              <q3:Append>false</q3:Append>
              <q3:Overwrite>false</q3:Overwrite>
              <q3:Suffix>None</q3:Suffix>
              <q3:IncludeHeader>false</q3:IncludeHeader>
              <q3:Selector>Source.Timestamp</q3:Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>LightTouched</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>Name.EndsWith("PokeAvailable")</q6:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="q3:CsvWriter">
              <q3:FileName>events\LightPosition.csv</q3:FileName>
              <q3:Append>false</q3:Append>
              <q3:Overwrite>false</q3:Overwrite>
              <q3:Suffix>None</q3:Suffix>
              <q3:IncludeHeader>false</q3:IncludeHeader>
              <q3:Selector />
            </Expression>
            <Expression xsi:type="q3:CsvWriter">
              <q3:FileName>events\BeamBreak.csv</q3:FileName>
              <q3:Append>false</q3:Append>
              <q3:Overwrite>false</q3:Overwrite>
              <q3:Suffix>None</q3:Suffix>
              <q3:IncludeHeader>false</q3:IncludeHeader>
              <q3:Selector>Source.Timestamp</q3:Selector>
            </Expression>
            <Expression xsi:type="q6:PythonTransform">
              <q6:Script>from System import Tuple, DateTimeOffset

start = 9

@returns(Tuple[DateTimeOffset,str,str])
def process(value):
  sub = value.Name.Substring(9).TrimEnd(')')
  pos = sub.Split(',')
  return Tuple.Create(value.Timestamp,pos[0],pos[1])</q6:Script>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>BeamBreak</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>Name.EndsWith("BeamBreak")</q6:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="q3:CsvWriter">
              <q3:FileName>events\LeftTrialEnd.csv</q3:FileName>
              <q3:Append>false</q3:Append>
              <q3:Overwrite>false</q3:Overwrite>
              <q3:Suffix>None</q3:Suffix>
              <q3:IncludeHeader>false</q3:IncludeHeader>
              <q3:Selector>Source.Timestamp</q3:Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>LeftTrialEnd</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>Name.EndsWith("LeftTrialEnd")</q6:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>10</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>35</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>15</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>26</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>31</From>
        <To>30</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>32</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>34</From>
        <To>33</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.15.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.DigitalInput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Undistort, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Resize, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.15.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.AnalogOutput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AsyncSubjectBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.LastOrDefault, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Videogame.RandomGenerator, Bonsai.Videogame, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Index, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Last, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Videogame.SquareWave, Bonsai.Videogame, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.DigitalOutput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Videogame.WaterValve, Bonsai.Videogame, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Merge, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SinkBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Amb, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Videogame.ExponentialTimer, Bonsai.Videogame, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SkipUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>