<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q8="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q2="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q9="clr-namespace:Bonsai.Videogame;assembly=Bonsai.Videogame" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q7="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Physics.Collision;assembly=Bonsai.Physics" xmlns:q4="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q6="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalInput">
          <q2:PortName>COM6</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>left_poke_activity.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.Timestamp,Source.Value</q3:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:FlyCapture">
          <q4:Index>0</q4:Index>
          <q4:ColorFormat>Rgb</q4:ColorFormat>
          <q4:ColorProcessing>NearestNeighbor</q4:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>video.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter</q3:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value.Image</Selector>
      </Expression>
      <Expression xsi:type="WindowWorkflow">
        <Name>CreateCollider</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:CreateTriMesh">
                <q5:Enabled>true</q5:Enabled>
                <q5:CategoryBits>1</q5:CategoryBits>
                <q5:CollideBits xsi:nil="true" />
                <q5:Position xsi:nil="true" />
                <q5:Orientation xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Space</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>CheckNotNull</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>it != null</q6:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property name="Data" selector="Source.Item1" />
              </PropertyMappings>
              <Selector>Source.Item2</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>SaveEvents</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupBy">
              <KeySelector>Source.Name</KeySelector>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>SaveEventFile</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>"events/"+Key+".csv"</q6:Expression>
                  </Expression>
                  <Expression xsi:type="q3:CsvWriter">
                    <q3:FileName>events/BallPosition.csv</q3:FileName>
                    <q3:Append>false</q3:Append>
                    <q3:Overwrite>true</q3:Overwrite>
                    <q3:Suffix>None</q3:Suffix>
                    <q3:IncludeHeader>false</q3:IncludeHeader>
                    <q3:Selector>Source.Timestamp,Source.Value</q3:Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="AsyncSubject">
                    <Name>Sequence</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Sequence</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
                    <MemberName>FileName</MemberName>
                    <Name>FileName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Sequence</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Merge" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>8</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>2</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:KeyDown">
          <q7:Filter>Z</q7:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMesh">
          <q1:ShaderName>Background</q1:ShaderName>
          <q1:MeshName>background</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMesh">
          <q1:ShaderName>Trigger</q1:ShaderName>
          <q1:MeshName>background</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q8:ImageWriter">
          <q8:Path>\\.\pipe\video</q8:Path>
          <q8:Suffix>None</q8:Suffix>
          <q8:Overwrite>false</q8:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="q6:PythonTransform">
        <q6:Script>import os
import clr
clr.AddReference("Bonsai.System")
from Bonsai.IO import PathHelper, PathSuffix

filename = 'out.avi'

def process(value):
  path = PathHelper.AppendSuffix(filename, PathSuffix.FileCount)
  os.system(r'ffmpeg -f rawvideo -vcodec rawvideo -s 1600x1200 -r 120 -pix_fmt rgb24 -i \\.\pipe\video -c:v h264_nvenc -preset fast -vb 20M video.avi'.format(path))</q6:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT5S</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Switch" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>tracking.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.X,Source.Y</q3:Selector>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property name="ImageSize" selector="Source.ImageSize" />
        </PropertyMappings>
        <Selector>Source.Contour</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q9:CreateContourTriMesh">
          <q9:ImageSize>
            <q9:Width>640</q9:Width>
            <q9:Height>512</q9:Height>
          </q9:ImageSize>
          <q9:Depth>10</q9:Depth>
          <q9:FlipContour xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SampleOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q9:ExponentialTimer">
          <q9:Mean>6000</q9:Mean>
          <q9:Offset>3000</q9:Offset>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>LeftTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="NestedWorkflow">
              <Name>LedOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>RewardTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q9:SquareWave">
                      <q9:Value>128</q9:Value>
                      <q9:Duration>PT0.05S</q9:Duration>
                      <q9:Period>PT0.1S</q9:Period>
                      <q9:Count>2</q9:Count>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>BeamBreak</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>1</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:DigitalInput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>6</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Success</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>DeliverReward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:DigitalOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>2</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q9:WaterValve">
                      <q9:MillilitersPerSecond>0.06</q9:MillilitersPerSecond>
                      <q9:MicrolitersPerDelivery>15</q9:MicrolitersPerDelivery>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>AvailabilityTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q9:SquareWave">
                      <q9:Value>15</q9:Value>
                      <q9:Duration>PT0.1S</q9:Duration>
                      <q9:Period>PT0.2S</q9:Period>
                      <q9:Count>100</q9:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Unit" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q9:TimestampEvent">
                      <q9:Name>LeftTrialStart</q9:Name>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Amb" />
            </Expression>
            <Expression xsi:type="Sink">
              <Name>LedOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q9:TimestampEvent">
                      <q9:Name>LeftTrialEnd</q9:Name>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>Ball</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:LatestOnUpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="TakeUntil" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Space</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:CreateSphere">
                      <q5:Enabled>true</q5:Enabled>
                      <q5:CategoryBits>2</q5:CategoryBits>
                      <q5:CollideBits>1</q5:CollideBits>
                      <q5:Position>
                        <q5:X>0.5154156838615499</q5:X>
                        <q5:Y>0.61485284823684616</q5:Y>
                        <q5:Z>0</q5:Z>
                      </q5:Position>
                      <q5:Orientation>
                        <q5:W>1</q5:W>
                        <q5:X>0</q5:X>
                        <q5:Y>0</q5:Y>
                        <q5:Z>0</q5:Z>
                      </q5:Orientation>
                      <q5:Radius>0.0375</q5:Radius>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>single(Radius*2)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source,Source</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateUniform">
                      <q1:UniformName>scale</q1:UniformName>
                      <q1:ShaderName>Ball</q1:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:GeomCollision">
                      <q5:IncludeContacts>true</q5:IncludeContacts>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q9:RandomPosition">
                      <q9:Minimum>
                        <q9:X>-0.9</q9:X>
                        <q9:Y>-0.9</q9:Y>
                        <q9:Z>0</q9:Z>
                      </q9:Minimum>
                      <q9:Maximum>
                        <q9:X>0.9</q9:X>
                        <q9:Y>0.9</q9:Y>
                        <q9:Z>0</q9:Z>
                      </q9:Maximum>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateUniform">
                      <q1:UniformName>shift</q1:UniformName>
                      <q1:ShaderName>Ball</q1:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Item2.x,Source.Item2.y</Selector>
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>new(
single(Position.X) as x,
single(Position.Y) as y)</q6:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfNullableOfVector3CreateSphere">
                    <MemberName>Position</MemberName>
                    <Name />
                    <Value>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Value>
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Name>RecordStimulus</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q9:TimestampEvent">
                            <q9:Name>BallPosition</q9:Name>
                            <q9:Value />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property name="Value" selector="Source" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="q6:ExpressionTransform">
                          <q6:Expression>it.ToString()</q6:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Source.X,Source.Y</Selector>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>6</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>3</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>4</From>
                          <To>3</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>5</From>
                          <To>4</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>6</From>
                          <To>5</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:DrawMesh">
                      <q1:ShaderName>Ball</q1:ShaderName>
                      <q1:MeshName>sprite</q1:MeshName>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>2</From>
                    <To>9</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>16</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>10</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>8</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>9</From>
                    <To>14</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>10</From>
                    <To>4</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>11</From>
                    <To>12</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>12</From>
                    <To>18</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>13</From>
                    <To>19</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>14</From>
                    <To>15</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>15</From>
                    <To>13</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>16</From>
                    <To>14</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>17</From>
                    <To>6</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>18</From>
                    <To>17</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>19</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Miss</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="BitwiseNot" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q9:TimestampEvent">
                      <q9:Name>TrialOutcome</q9:Name>
                      <q9:Value>True</q9:Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property name="Value" selector="Source" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="q6:ExpressionTransform">
                    <q6:Expression>it.ToString()</q6:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>RecordEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q9:TimestampEvent">
                      <q9:Name>LeftPokeAvailable</q9:Name>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q9:TimestampEvent">
                      <q9:Name>LightTouched</q9:Name>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Merge" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>6</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Merge" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>18</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>18</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="q6:ExpressionTransform">
        <q6:Expression>Index*2+2</q6:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="LastOrDefault" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>events.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:KeyDown">
          <q7:Filter>Z</q7:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="AsyncSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Index" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Repeat" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Space</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q9:RandomGenerator">
          <q9:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>EndSession</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="NestedWorkflow">
              <Name>LeftLedOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>5</q2:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>LeftToneOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:AnalogOutput">
                      <q2:PortName>COM6</q2:PortName>
                      <q2:Pin>3</q2:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:CreateHashSpace">
          <q5:MaxContacts>1</q5:MaxContacts>
          <q5:ExcludeConnected>true</q5:ExcludeConnected>
          <q5:CollisionHandlers />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Tracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:FindContours">
                <q8:Mode>External</q8:Mode>
                <q8:Method>ChainApproxNone</q8:Method>
                <q8:Offset>
                  <q8:X>0</q8:X>
                  <q8:Y>0</q8:Y>
                </q8:Offset>
                <q8:MinArea>200</q8:MinArea>
                <q8:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:Threshold">
                <q8:ThresholdValue>18</q8:ThresholdValue>
                <q8:MaxValue>255</q8:MaxValue>
                <q8:ThresholdType>BinaryInv</q8:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="q6:PythonTransform">
              <q6:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):
  green = IplImage(value.Size,value.Depth,1)
  CV.Split(value,None,green,None,None)
  return green</q6:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Centroid,Source.Contour</Selector>
            </Expression>
            <Expression xsi:type="q6:ExpressionTransform">
              <q6:Expression>new(
2 * Item1.Item1.X / Item2.Width - 1 as X,
2 * Item1.Item1.Y / Item2.Height - 1 as Y,
Item1.Item2 as Contour,
Item2 as ImageSize)</q6:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Size</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:Undistort">
                <q8:Alpha>0</q8:Alpha>
                <q8:ComputeOptimalMatrix>false</q8:ComputeOptimalMatrix>
                <q8:FocalLength>
                  <q8:X>1000</q8:X>
                  <q8:Y>1000</q8:Y>
                </q8:FocalLength>
                <q8:PrincipalPoint>
                  <q8:X>317</q8:X>
                  <q8:Y>254</q8:Y>
                </q8:PrincipalPoint>
                <q8:RadialDistortion>
                  <q8:X>-0.3</q8:X>
                  <q8:Y>0</q8:Y>
                  <q8:Z>0</q8:Z>
                </q8:RadialDistortion>
                <q8:TangentialDistortion>
                  <q8:X>0</q8:X>
                  <q8:Y>-0.01</q8:Y>
                </q8:TangentialDistortion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:Resize">
                <q8:Size>
                  <q8:Width>640</q8:Width>
                  <q8:Height>512</q8:Height>
                </q8:Size>
                <q8:Interpolation>Linear</q8:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:Crop">
                <q8:RegionOfInterest>
                  <q8:X>164</q8:X>
                  <q8:Y>91</q8:Y>
                  <q8:Width>1280</q8:Width>
                  <q8:Height>1024</q8:Height>
                </q8:RegionOfInterest>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT3S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>mvp</q1:UniformName>
          <q1:ShaderName>Ball</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:WarpPerspective">
          <q1:Destination>
            <q1:Point2f>
              <q1:X>-0.7262397</q1:X>
              <q1:Y>-0.965328455</q1:Y>
            </q1:Point2f>
            <q1:Point2f>
              <q1:X>-0.7262397</q1:X>
              <q1:Y>0.914233565</q1:Y>
            </q1:Point2f>
            <q1:Point2f>
              <q1:X>0.7427686</q1:X>
              <q1:Y>0.9087591</q1:Y>
            </q1:Point2f>
            <q1:Point2f>
              <q1:X>0.7376033</q1:X>
              <q1:Y>-0.961678863</q1:Y>
            </q1:Point2f>
          </q1:Destination>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q9:TimestampEvent">
          <q9:Name>SessionStart</q9:Name>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>45</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>46</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>13</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>40</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>33</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>37</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>27</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>32</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>35</From>
        <To>38</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>36</From>
        <To>41</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>38</From>
        <To>34</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>39</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>40</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>41</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>42</From>
        <To>29</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>44</From>
        <To>43</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>45</From>
        <To>44</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>46</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.15.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.DigitalInput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
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  </ExtensionTypes>
</WorkflowBuilder>