WorkflowBuilder(Version=2.3.0)
NestedWorkflow ListenToDrinkBeamBreak
    Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
    -> Timestamp
    -> Bonsai.IO.CsvWriter(FileName=events\DrinkPokeActivity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")
    -> WorkflowOutput

Bonsai.PointGrey.FlyCapture(Index=0, ColorFormat=Rgb, ColorProcessing=NearestNeighbor)
-> Timestamp => #3
SubscribeSubject EndTrigger
-> Delay(DueTime=PT1S) => #36
#3, #36 -> TakeUntil
-> Bonsai.IO.CsvWriter
  FileName=Video.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false
  Selector="Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter"
-> MemberSelector(Selector=Source.Value.Image)
-> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
-> NestedWorkflow Tracking
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=164, Y=91, Width=1280, Height=1024))
    -> Bonsai.Vision.Resize(Size(Width=640, Height=512), Interpolation=Linear)
    -> Bonsai.Scripting.PythonTransform
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *

        @returns(IplImage)
        def process(value):
          green = IplImage(value.Size,value.Depth,1)
          CV.Split(value,None,green,None,None)
          return green
    -> Bonsai.Vision.Undistort
      Alpha=0
      ComputeOptimalMatrix=false
      FocalLength(X=1000, Y=1000)
      PrincipalPoint(X=317, Y=254)
      RadialDistortion(X=-0.3, Y=0, Z=0)
      TangentialDistortion(X=0, Y=-0.01)
    -> Bonsai.Vision.ResizeCanvas(Size(Width=640, Height=640), BorderType=Constant, FillValue(Val0=255, Val1=255, Val2=255, Val3=255))
    -> Bonsai.Vision.Threshold(ThresholdValue=10, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=1, Y=1), Shape=Rectangle, Iterations=1, Operation=Erode) => #18
    Bonsai.Vision.LoadImage(FileName=textures\walls-binary.png, Mode=Grayscale) => #15
    #18, #15 -> CombineLatest
    -> Subtract => #17
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=800, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector="Source.Centroid,Source.Contour") => #7
    #17 -> MemberSelector(Selector=Source.Size) => #10
    #7, #10 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        2 * Item1.Item1.X / Item2.Width - 1 as X,
        2 * Item1.Item1.Y / Item2.Height - 1 as Y,
        Item1.Item2 as Contour,
        Item2 as ImageSize)
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=events\Tracking.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.X,Source.Y")
-> NestedWorkflow CreateRatCollider
    WorkflowInput Source1
    -> InputMapping(Selector=Source.Contour, ImageSize(selector=Source.ImageSize))
    -> Bonsai.Videogame.CreateContourTriMesh(ImageSize(Width=640, Height=640), Depth=10, FlipContour=nil)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> WindowWorkflow CreateCollider
        WorkflowInput Source1
        -> Condition CheckNotNull => #4
            WorkflowInput Source1
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it != null
            -> WorkflowOutput
        SubscribeSubject Space => #3
        #4, #3 -> Zip
        -> InputMapping(Selector=Source.Item2, Data(selector=Source.Item1))
        -> Bonsai.Physics.Collision.CreateTriMesh(Enabled=true, CategoryBits=1, CollideBits=nil, Material=Rock, Position=nil, Orientation=nil)
        -> WorkflowOutput
    -> Switch
    -> WorkflowOutput

SubscribeSubject Events
-> Bonsai.IO.CsvWriter(FileName=Events.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
-> NestedWorkflow SaveEvents
    WorkflowInput Source1
    -> GroupBy(KeySelector=Source.Name)
    -> SelectMany SaveEventFile
        WorkflowInput Source1
        -> AsyncSubject Sequence

        SubscribeSubject Sequence
        -> Merge => #8
        SubscribeSubject Sequence
        -> Bonsai.Scripting.ExpressionTransform
          Expression: "events/"+Key+".csv"
        -> ExternalizedPropertyOfStringCsvWriter FileName(MemberName=FileName) => #6
        #8, #6 -> Bonsai.IO.CsvWriter(FileName=events/EphysStop.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")
        -> WorkflowOutput

Timer(DueTime=PT5S, Period=PT0S)
-> Bonsai.Scripting.PythonTransform
  Script:
    import os
    import clr
    clr.AddReference("Bonsai.System")
    from Bonsai.IO import PathHelper, PathSuffix

    filename = 'Video.avi'

    def process(value):
      #filename = PathHelper.AppendSuffix(filename, PathSuffix.FileCount)
      os.system(r'ffmpeg -f rawvideo -vcodec rawvideo -s 1600x1200 -r 120 -pix_fmt rgb24 -i \\.\pipe\video -c:v h264_nvenc -preset fast -vb 20M {0}'.format(filename))

NestedWorkflow ListenToFoodBeamBreak
    Bonsai.Arduino.DigitalInput(PortName=COM12, Pin=6)
    -> Timestamp
    -> Bonsai.IO.CsvWriter(FileName=events\FoodPokeActivity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")
    -> WorkflowOutput

Bonsai.Shaders.RenderFrame => #19
SubscribeSubject Ephys
-> Unit => #31
Bonsai.Windows.Input.KeyDown(Filter=S)
-> Unit => #32
#31, #32 -> Merge
-> Bonsai.Videogame.TimestampEvent(Name=VideoStart)
-> MulticastSubject Events => #20
#19, #20 -> SubscribeWhen
-> PublishSubject StartTrigger
-> Bonsai.Shaders.DrawMesh(ShaderName=Background, MeshName=background)
-> Bonsai.Shaders.DrawMesh(ShaderName=Trigger, MeshName=background) => #13
Bonsai.Windows.Input.KeyDown(Filter=Z)
-> Bonsai.Videogame.TimestampEvent(Name=VideoStop)
-> MulticastSubject Events
-> Bonsai.Shaders.SampleOnUpdateFrame => #41
#13, #41 -> TakeUntil
-> TakeLast(Count=1)
-> PublishSubject EndTrigger

Bonsai.Ephys.Rhd2000EvalBoard => #28
  BitFileName=rhd2000.bit
  SampleRate=SampleRate30000Hz
  FastSettle=false
  LowerBandwidth=0.1
  UpperBandwidth=7500
  DspCutoffFrequency=1
  DspEnabled=true
  CableDelayA=6
  CableDelayB=nil
  CableDelayC=nil
  CableDelayD=nil
Bonsai.Windows.Input.KeyDown(Filter=E)
-> Bonsai.Videogame.TimestampEvent(Name=EphysStart)
-> BehaviorSubject Events => #6
#28, #6 -> SubscribeWhen => #27
Bonsai.Windows.Input.KeyDown(Filter=End)
-> Bonsai.Videogame.TimestampEvent(Name=EphysStop)
-> MulticastSubject Events => #46
#27, #46 -> TakeUntil => #47
-> MemberSelector(Selector=Source.BufferCapacity)
#47 -> MemberSelector(Selector=Source.TtlIn)
-> Bonsai.Dsp.MatrixWriter(Path=Sync.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
#47 -> MemberSelector(Selector=Source.AmplifierData)
-> Bonsai.Dsp.MatrixWriter(Path=Amplifier.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
-> PublishSubject Ephys
#47 -> MemberSelector(Selector=Source.AuxiliaryData)
-> Bonsai.Dsp.MatrixWriter(Path=Accelerometer.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
#47 -> MemberSelector(Selector=Source.Timestamp)
-> Bonsai.Dsp.MatrixWriter(Path=EphysTimestamps.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)

Bonsai.Videogame.RandomGenerator(Seed=nil)
-> Delay(DueTime=PT3S)
-> AsyncSubject Random

Bonsai.Windows.Input.KeyDown(Filter=Z) => #55
SubscribeSubject Random
-> Bonsai.Videogame.ShuffleNames
  TrialCount=100
  Names(WeightedOfString(Weight=0, Value=DrinkTrial), WeightedOfString(Weight=1, Value=FoodTrial), WeightedOfString(Weight=0, Value=DrinkFoodTrial))
-> Concat
-> WindowWorkflow Trial
    SubscribeSubject Random => #1
    SubscribeSubject TrialRewardType => #5
    ExternalizedPropertyOfDoubleExponentialTimer Mean(MemberName=Mean, Value=10000) => #9
    ExternalizedPropertyOfDoubleExponentialTimer Offset(MemberName=Offset, Value=6000) => #10
    #1, #9, #10 -> Bonsai.Videogame.ExponentialTimer(Mean=3000, Offset=1000)
    -> Sink RecordEvent => #11
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialStart)
        -> MulticastSubject Events
        -> WorkflowOutput
    #5, #11 -> SubscribeWhen => #0
    -> Condition DrinkTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=DrinkTrial))
        -> WorkflowOutput
    -> SelectMany DrinkTrial => #24
        WorkflowInput Source1 => #8
        -> SelectMany AvailabilityTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=200)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
            -> Last
            -> Unit
            -> WorkflowOutput
        -> StringProperty(Value=MissedTrial) => #3
        #8 -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodStart)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
            -> Take(Count=1)
            -> Unit
            -> WorkflowOutput
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodBeamBreak)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> StringProperty(Value=DrinkReward) => #2
        #2, #3 -> Amb
        -> WorkflowOutput
    #0 -> Condition FoodTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=FoodTrial))
        -> WorkflowOutput
    -> NestedWorkflow FoodTrial => #27
        WorkflowInput Source1 => #6
        -> SelectMany AvailabilityTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.35S, Period=PT0.5S, Count=80) => #0
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
            -> Last => #4
            -> Unit
            -> WorkflowOutput
            #4 -> BooleanProperty(Value=false)
            -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
            #0 -> BooleanProperty(Value=true)
            -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
        -> StringProperty(Value=MissedTrial) => #1
        #6 -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodStart)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM12, Pin=6)
            -> Take(Count=1) => #1
            -> Unit
            -> WorkflowOutput
            #1 -> BooleanProperty(Value=false)
            -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodBeamBreak)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> StringProperty(Value=FoodReward) => #0
        #0, #1 -> Amb
        -> WorkflowOutput
    #24, #27 -> Merge
    -> Sink ShutOffPokes => #28
        WorkflowInput Source1
        -> NestedWorkflow DrinkLedOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
            -> WorkflowOutput
        -> SelectMany DrinkToneOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
            -> WorkflowOutput
        -> NestedWorkflow FoodLedOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=5)
            -> WorkflowOutput
        -> SelectMany FoodToneOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Condition DrinkReward
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=DrinkReward))
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> Last
        -> WorkflowOutput
    -> SelectMany DeliverDrink
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=4)
        -> Delay(DueTime=PT0.5S)
        -> BooleanProperty(Value=false)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=4)
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialEnd, Value=Drink)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Unit => #21
    #28 -> Condition FoodReward
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=FoodReward))
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2) => #4
        -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
        -> Last => #0
        -> WorkflowOutput
        #0 -> BooleanProperty(Value=false)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
        #4 -> BooleanProperty(Value=true)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
    -> NestedWorkflow PelletDispenser
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=4)
        -> Delay(DueTime=PT0.5S)
        -> BooleanProperty(Value=false)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=4)
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialEnd, Value=Food)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Unit => #22
    #28 -> Condition MissedTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=MissedTrial))
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialEnd, Value=Missed)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Unit => #23
    #21, #22, #23 -> Merge
    -> WorkflowOutput

    WorkflowInput Source1
    -> Sink RecordEvent
        WorkflowInput Source1
        -> InputMapping(Value)
        -> Bonsai.Videogame.TimestampEvent(Name=TrialRewardType, Value=FoodTrial)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> ReplaySubject TrialRewardType(BufferSize=1)
-> Concat
-> Repeat => #57
SubscribeSubject StartTrigger => #81
#57, #81 -> SubscribeWhen
-> Index
-> Bonsai.Scripting.ExpressionTransform => #54
  Expression: Index*2+2
#54, #55 -> TakeUntil
-> LastOrDefault
-> NestedWorkflow ShutOffPokes
    WorkflowInput Source1
    -> NestedWorkflow DrinkLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany DrinkToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> WorkflowOutput
    -> NestedWorkflow FoodLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=5)
        -> WorkflowOutput
    -> SelectMany FoodToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
        -> WorkflowOutput
    -> WorkflowOutput

Bonsai.Shaders.UpdateFrame => #77
-> Take(Count=1) => #76
-> Bonsai.Shaders.WarpPerspective
  Destination(Point2f(X=-0.7262397, Y=-0.965328455), Point2f(X=-0.7262397, Y=0.914233565), Point2f(X=0.7427686, Y=0.9087591), Point2f(X=0.7376033, Y=-0.961678863))
-> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Ball)
-> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Debug)
-> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Walls)
#76 -> Bonsai.Vision.LoadImage(FileName=textures\walls.png, Mode=Unchanged)
-> Bonsai.Shaders.UpdateTexture(TextureName=walls, InternalFormat=Rgba)
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Threshold(ThresholdValue=10, MaxValue=255, ThresholdType=Binary)
-> Bonsai.Vision.FindContours(Mode=List, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.ApproximatePolygon(Method=DouglasPeucker, Eps=1, Recursive=true)
-> Bonsai.Vision.BinaryRegionAnalysis
-> SelectMany CreateWalls
    WorkflowInput Source1 => #0
    -> Concat
    -> MemberSelector(Selector=Source.Contour) => #1
    #0 -> MemberSelector(Selector=Source.ImageSize) => #6
    #6, #1 -> CombineLatest
    -> InputMapping(Selector=Source.Item2, ImageSize(selector=Source.Item1))
    -> Bonsai.Videogame.CreateContourTriMesh(ImageSize(Width=1210, Height=1210), Depth=10, FlipContour=nil)
    -> SelectMany CreateCollider
        WorkflowInput Source1 => #0
        SubscribeSubject Space => #3
        #0, #3 -> Zip
        -> InputMapping(Selector=Source.Item2, Data(selector=Source.Item1))
        -> Bonsai.Physics.Collision.CreateTriMesh(Enabled=true, CategoryBits=2, CollideBits=5, Material=Rock, Position=nil, Orientation=nil)
        -> WorkflowOutput
    -> WorkflowOutput
-> Timestamp
#77 -> MemberSelector(Selector=Source.EventArgs.Time) => #82
-> Bonsai.Physics.Collision.CreateHashSpace
  MaxContacts=1
  ExcludeConnected=true
  CollisionHandlers
    CollisionHandler
      Material1=Rock
      Material2=Rock
      CollisionSurface
        Mode=FrictionDirection1
        Mu=0
        Mu2=0
        Rho=0
        Rho2=0
        RhoN=0
        Bounce=0.03
        BounceVelocity=0
        SoftErp=0
        SoftCfm=0
        Motion1=0
        Motion2=0
        MotionN=0
        Slip1=0
        Slip2=0
-> BehaviorSubject Space
#82 -> Bonsai.Physics.CreateWorld(Gravity(X=0, Y=0, Z=0), StepSize=0.016, Cfm=1E-10, Erp=0.2)
-> ReplaySubject World(BufferSize=nil)
