WorkflowBuilder(Version=2.3.0)
NestedWorkflow ListenToDrinkBeamBreak
    Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
    -> Timestamp
    -> Bonsai.IO.CsvWriter(FileName=events\DrinkPokeActivity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")
    -> WorkflowOutput

Bonsai.PointGrey.FlyCapture(Index=0, ColorFormat=Rgb, ColorProcessing=NearestNeighbor)
-> Timestamp => #3
SubscribeSubject EndTrigger
-> Delay(DueTime=PT1S) => #37
#3, #37 -> TakeUntil
-> Bonsai.IO.CsvWriter
  FileName=Video.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false
  Selector="Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter"
-> MemberSelector(Selector=Source.Value.Image)
-> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
-> NestedWorkflow Tracking
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=164, Y=91, Width=1280, Height=1024))
    -> Bonsai.Vision.Resize(Size(Width=640, Height=512), Interpolation=Linear)
    -> Bonsai.Scripting.PythonTransform
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *

        @returns(IplImage)
        def process(value):
          green = IplImage(value.Size,value.Depth,1)
          CV.Split(value,None,green,None,None)
          return green
    -> Bonsai.Vision.Undistort
      Alpha=0
      ComputeOptimalMatrix=false
      FocalLength(X=1000, Y=1000)
      PrincipalPoint(X=317, Y=254)
      RadialDistortion(X=-0.3, Y=0, Z=0)
      TangentialDistortion(X=0, Y=-0.01)
    -> Bonsai.Vision.ResizeCanvas(Size(Width=640, Height=640), BorderType=Constant, FillValue(Val0=255, Val1=255, Val2=255, Val3=255))
    -> Bonsai.Vision.Threshold(ThresholdValue=12, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=1, Y=1), Shape=Rectangle, Iterations=1, Operation=Erode) => #16
    Bonsai.Vision.LoadImage(FileName=textures\walls-binary.png, Mode=Grayscale) => #15
    #16, #15 -> CombineLatest
    -> Subtract => #18
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector="Source.Centroid,Source.Contour") => #7
    #18 -> MemberSelector(Selector=Source.Size) => #10
    #7, #10 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        2 * Item1.Item1.X / Item2.Width - 1 as X,
        2 * Item1.Item1.Y / Item2.Height - 1 as Y,
        Item1.Item2 as Contour,
        Item2 as ImageSize)
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=events\Tracking.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.X,Source.Y")
-> NestedWorkflow CheckRatCollision => #102
    WorkflowInput Source1
    -> InputMapping(Selector=Source.Contour, ImageSize(selector=Source.ImageSize))
    -> Bonsai.Videogame.CreateContourTriMesh(ImageSize(Width=640, Height=640), Depth=10, FlipContour=nil)
    -> Condition CheckNotNull => #7
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it != null
        -> WorkflowOutput
    SubscribeSubject BallPosition => #6
    Bonsai.Videogame.NullSpace => #8
    -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=nil, CollideBits=nil, Position=nil, Orientation=nil, Radius=0.03) => #1
    #1, #6 -> CombineLatest
    -> InputMapping(Selector=Source.Item1, Position(selector=Source.Item2))
    -> Bonsai.Physics.SetTransform(Position(X=0.34070711726821346, Y=0.25015140883631615, Z=0), Orientation=nil) => #14
    #7, #8 -> CombineLatest => #9
    #9, #14 -> CombineLatest => #0
    #0, #9 -> Gate
    -> SelectMany SingleShotTrimesh
        WorkflowInput Source1 => #3
        -> MemberSelector(Selector=Source.Item1)
        -> InputMapping(Selector=Source.Item2, Data(selector=Source.Item1))
        -> Bonsai.Physics.Collision.CreateTriMesh(Enabled=true, CategoryBits=1, CollideBits=nil, Material=Rock, Position=nil, Orientation=nil) => #1
        #3 -> MemberSelector(Selector=Source.Item2) => #6
        #1, #6 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Videogame.Collide(MaxContacts=1)
    -> Condition HasCollision
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.Length)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> Bonsai.Scripting.ExpressionTransform => #12
      Expression:
        new(
        false as IsInner,
        it as Vector)
    #8 -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=nil, CollideBits=nil, Position=nil, Orientation=nil, Radius=0.2) => #20
    #20, #6 -> CombineLatest
    -> InputMapping(Selector=Source.Item1, Position(selector=Source.Item2))
    -> Bonsai.Physics.SetTransform(Position(X=0.34070711726821346, Y=0.25015140883631615, Z=0), Orientation=nil) => #17
    #9, #17 -> CombineLatest => #25
    #25, #9 -> Gate
    -> SelectMany SingleShotBigTrimesh
        WorkflowInput Source1 => #3
        -> MemberSelector(Selector=Source.Item1)
        -> InputMapping(Selector=Source.Item2, Data(selector=Source.Item1))
        -> Bonsai.Physics.Collision.CreateTriMesh(Enabled=true, CategoryBits=1, CollideBits=nil, Material=Rock, Position=nil, Orientation=nil) => #1
        #3 -> MemberSelector(Selector=Source.Item2) => #6
        #1, #6 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Videogame.Collide(MaxContacts=1)
    -> Condition HasCollision
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.Length)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Bonsai.Scripting.ExpressionTransform
      Expression: it[0]
    -> NestedWorkflow EscapeForce
        WorkflowInput Source1 => #9
        -> MemberSelector(Selector=Source.Geom2.Position) => #1
        #9 -> MemberSelector(Selector=Source.Position) => #8
        #1, #8 -> Zip
        -> Subtract
        -> InputMapping(X(selector=Source.X), Y(selector=Source.Y), Z(selector=Source.Z))
        -> Bonsai.Shaders.CreateVector3(X=0.0145950662, Y=0.199320823, Z=2.92073219E-05)
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression: it.Normalized()
        ExternalizedPropertyOfSingleFloatProperty Force(MemberName=Value, Value=0.08)
        -> FloatProperty(Value=0.08) => #4
        #3, #4 -> CombineLatest
        -> Multiply
        -> WorkflowOutput
    -> Bonsai.Scripting.ExpressionTransform => #27
      Expression:
        new(
        true as IsInner,
        it as Vector)
    #12, #27 -> Merge
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Source.IsInner)
    -> BitwiseNot
    -> WorkflowOutput
-> PublishSubject RatCollision
#102 -> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Source.IsInner)
    -> WorkflowOutput
-> MemberSelector(Selector=Source.Vector)
-> PublishSubject EscapeForce

SubscribeSubject Events
-> Bonsai.IO.CsvWriter(FileName=Events.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
-> NestedWorkflow SaveEvents
    WorkflowInput Source1
    -> GroupBy(KeySelector=Source.Name)
    -> SelectMany SaveEventFile
        WorkflowInput Source1
        -> AsyncSubject Sequence

        SubscribeSubject Sequence
        -> Merge => #8
        SubscribeSubject Sequence
        -> Bonsai.Scripting.ExpressionTransform
          Expression: "events/"+Key+".csv"
        -> ExternalizedPropertyOfStringCsvWriter FileName(MemberName=FileName) => #6
        #8, #6 -> Bonsai.IO.CsvWriter(FileName=events/VideoStop.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")
        -> WorkflowOutput

Timer(DueTime=PT5S, Period=PT0S)
-> Bonsai.Scripting.PythonTransform
  Script:
    import os
    import clr
    clr.AddReference("Bonsai.System")
    from Bonsai.IO import PathHelper, PathSuffix

    filename = 'Video.avi'

    def process(value):
      #filename = PathHelper.AppendSuffix(filename, PathSuffix.FileCount)
      os.system(r'ffmpeg -f rawvideo -vcodec rawvideo -s 1600x1200 -r 120 -pix_fmt rgb24 -i \\.\pipe\video -c:v h264_nvenc -preset fast -vb 20M {0}'.format(filename))

NestedWorkflow ListenToFoodBeamBreak
    Bonsai.Arduino.DigitalInput(PortName=COM12, Pin=6)
    -> Timestamp
    -> Bonsai.IO.CsvWriter(FileName=events\FoodPokeActivity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")
    -> WorkflowOutput

Bonsai.Shaders.RenderFrame => #20
SubscribeSubject Ephys
-> Unit => #32
Bonsai.Windows.Input.KeyDown(Filter=S)
-> Unit => #33
#32, #33 -> Merge
-> Bonsai.Videogame.TimestampEvent(Name=VideoStart)
-> MulticastSubject Events => #21
#20, #21 -> SubscribeWhen
-> PublishSubject StartTrigger
-> Bonsai.Shaders.DrawMesh(ShaderName=Background, MeshName=background)
-> Bonsai.Shaders.DrawMesh(ShaderName=Trigger, MeshName=background) => #14
Bonsai.Windows.Input.KeyDown(Filter=Z)
-> Bonsai.Videogame.TimestampEvent(Name=VideoStop)
-> MulticastSubject Events
-> Bonsai.Shaders.SampleOnUpdateFrame => #42
#14, #42 -> TakeUntil
-> TakeLast(Count=1)
-> PublishSubject EndTrigger

Bonsai.Ephys.Rhd2000EvalBoard => #29
  BitFileName=rhd2000.bit
  SampleRate=SampleRate30000Hz
  FastSettle=false
  LowerBandwidth=0.1
  UpperBandwidth=7500
  DspCutoffFrequency=1
  DspEnabled=true
  CableDelayA=6
  CableDelayB=nil
  CableDelayC=nil
  CableDelayD=nil
Bonsai.Windows.Input.KeyDown(Filter=E)
-> Bonsai.Videogame.TimestampEvent(Name=EphysStart)
-> BehaviorSubject Events => #7
#29, #7 -> SubscribeWhen => #28
Bonsai.Windows.Input.KeyDown(Filter=End)
-> Bonsai.Videogame.TimestampEvent(Name=EphysStop)
-> MulticastSubject Events => #47
#28, #47 -> TakeUntil => #48
-> MemberSelector(Selector=Source.BufferCapacity)
#48 -> MemberSelector(Selector=Source.TtlIn)
-> Bonsai.Dsp.MatrixWriter(Path=Sync.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
#48 -> MemberSelector(Selector=Source.AmplifierData)
-> Bonsai.Dsp.MatrixWriter(Path=Amplifier.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
-> PublishSubject Ephys
#48 -> MemberSelector(Selector=Source.AuxiliaryData)
-> Bonsai.Dsp.MatrixWriter(Path=Accelerometer.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
#48 -> MemberSelector(Selector=Source.Timestamp)
-> Bonsai.Dsp.MatrixWriter(Path=EphysTimestamps.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)

Bonsai.Videogame.RandomGenerator(Seed=nil)
-> Delay(DueTime=PT3S)
-> AsyncSubject Random

Bonsai.Windows.Input.KeyDown(Filter=Z) => #56
SubscribeSubject Random
-> Bonsai.Videogame.ShuffleNames
  TrialCount=100
  Names(WeightedOfString(Weight=0, Value=DrinkTrial), WeightedOfString(Weight=1, Value=FoodTrial), WeightedOfString(Weight=0, Value=DrinkFoodTrial))
-> Concat => #87
SubscribeSubject StartTrigger => #82
SubscribeSubject Random
-> Bonsai.Videogame.ShuffleNames(TrialCount=100, Names(WeightedOfString(Weight=0, Value=StableBall), WeightedOfString(Weight=1, Value=MovingBall)))
-> Concat => #89
StringProperty(Value=StableBall)
-> Take(Count=1)
-> RepeatCount(Count=0) => #95
StringProperty(Value=FirstMovingBall)
-> Take(Count=1) => #109
#95, #109, #89 -> Concat => #96
#87, #96 -> Zip
-> WindowWorkflow Trial
    SubscribeSubject Random => #1
    SubscribeSubject TrialRewardType => #5
    ExternalizedPropertyOfDoubleExponentialTimer Mean(MemberName=Mean, Value=6000) => #10
    ExternalizedPropertyOfDoubleExponentialTimer Offset(MemberName=Offset, Value=3000) => #11
    #1, #10, #11 -> Bonsai.Videogame.ExponentialTimer(Mean=6000, Offset=3000)
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialStart)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> SelectMany Ball => #31
        WorkflowInput Source1

        SubscribeSubject Space => #4
        SubscribeSubject Random => #8
        -> Condition FirstMoving
            WorkflowInput Source1

            SubscribeSubject TrialBallType
            -> Equal(Operand=StringProperty(Value=FirstMovingBall))
            -> WorkflowOutput
        -> Bonsai.Videogame.RandomPosition(Minimum(X=0, Y=0, Z=0), Maximum(X=0, Y=0, Z=0)) => #31
        #8 -> Condition NotFirstMoving
            WorkflowInput Source1

            SubscribeSubject TrialBallType
            -> NotEqual(Operand=StringProperty(Value=FirstMovingBall))
            -> WorkflowOutput
        -> Bonsai.Videogame.RandomPosition(Minimum(X=-0.75, Y=-0.75, Z=0), Maximum(X=0.75, Y=0.75, Z=0)) => #20
        #20, #31 -> Merge
        -> ExternalizedPropertyOfNullableOfVector3CreateSphere(MemberName=Position, Value(X=0, Y=0, Z=0)) => #9
        SubscribeSubject RatCollision
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=RatTouchBall)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> Take(Count=1)
        -> Bonsai.Shaders.SampleOnUpdateFrame => #17
        SubscribeSubject World => #13
        #13, #9 -> Bonsai.Physics.CreateBody(Position(X=0.34070711726821346, Y=0.25015140883631615, Z=0), Orientation(W=1, X=0, Y=0, Z=0), Kinematic=false)
        -> Sink Plane2D => #18
            WorkflowInput Source1
            -> Bonsai.Physics.Joints.CreatePlane2D
            -> WorkflowOutput
        ExternalizedPropertyOfDoubleCreateSphereMass Radius(MemberName=Radius, Value=0.06) => #19
        #18, #19 -> Bonsai.Physics.CreateSphereMass(Radius=0.06, Density=5)
        -> Sink MassRightJoystickControls => #16
            WorkflowInput Source1 => #12
            Bonsai.Shaders.Input.GamePad(Index=0) => #13
            -> Condition RightJoyRight => #14
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.ThumbSticks.Right.X)
                -> GreaterThan(Operand=FloatProperty(Value=0.5))
                -> WorkflowOutput
            #12, #14 -> CombineLatest
            -> MemberSelector(Selector=Source.Item1)
            -> Bonsai.Physics.AddForce(Force(X=-0.001, Y=0, Z=0), Position=nil, RelativeForce=true, RelativePosition=false)
            #13 -> Condition RightJoyUp => #15
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.ThumbSticks.Right.Y)
                -> GreaterThan(Operand=FloatProperty(Value=0.5))
                -> WorkflowOutput
            #12, #15 -> CombineLatest
            -> MemberSelector(Selector=Source.Item1)
            -> Bonsai.Physics.AddForce(Force(X=0, Y=-0.001, Z=0), Position=nil, RelativeForce=true, RelativePosition=false)
            #13 -> Condition RightJoyLeft => #16
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.ThumbSticks.Right.X)
                -> LessThan(Operand=FloatProperty(Value=-0.5))
                -> WorkflowOutput
            #12, #16 -> CombineLatest
            -> MemberSelector(Selector=Source.Item1)
            -> Bonsai.Physics.AddForce(Force(X=0.001, Y=0, Z=0), Position=nil, RelativeForce=true, RelativePosition=false)
            #13 -> Condition RightJoyDown => #17
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.ThumbSticks.Right.Y)
                -> LessThan(Operand=FloatProperty(Value=-0.5))
                -> WorkflowOutput
            #12, #17 -> CombineLatest
            -> MemberSelector(Selector=Source.Item1)
            -> Bonsai.Physics.AddForce(Force(X=0, Y=0.001, Z=0), Position=nil, RelativeForce=true, RelativePosition=false)
        #16, #4, #19 -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=4, CollideBits=nil, Material=Rock, Position=nil, Orientation=nil, Radius=0.06)
        -> NestedWorkflow CollisionClear
            WorkflowInput Source1 => #0
            -> Bonsai.Videogame.Collide(MaxContacts=1)
            -> MemberSelector(Selector=Source.Length)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #5 -> TakeUntil
            -> Repeat
            -> WorkflowOutput
        -> Sink UpdateRatColliderPosition => #22
            WorkflowInput Source1
            -> Bonsai.Shaders.LatestOnUpdateFrame
            -> MemberSelector(Selector=Source.Position)
            -> MulticastSubject BallPosition
            -> WorkflowOutput
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Timestamp => #4
            -> Bonsai.Videogame.TimestampEvent(Name=BallOn) => #2
            #4 -> MemberSelector(Selector="Source.Value.Position.X,Source.Value.Position.Y")
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it.ToString()
            -> InputMapping(Value(selector=Source))
            -> Bonsai.Videogame.TimestampEvent(Name=BallPosition, Value="(0.340707117268213, 0.250151408836316)") => #5
            #2, #5 -> Merge => #6
            Source2=#6 -> MulticastSubject Events
            -> WorkflowOutput
        -> NestedWorkflow DrawBall => #6
            WorkflowInput Source1
            -> Bonsai.Shaders.LatestOnRenderFrame => #10
            -> Bonsai.Scripting.ExpressionTransform => #4
              Expression:
                new(
                single(Position.X) as x,
                single(Position.Y) as y)
            #10 -> Bonsai.Scripting.ExpressionTransform
              Expression: single(Radius)
            -> MemberSelector(Selector="Source,Source")
            -> Bonsai.Shaders.UpdateUniform(UniformName=scale, ShaderName=Ball) => #3
            #3, #4 -> Zip
            -> MemberSelector(Selector="Source.Item2.x,Source.Item2.y")
            -> Sink RecordEvent
                WorkflowInput Source1
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: it.ToString()
                -> InputMapping(Value(selector=Source))
                -> Bonsai.Videogame.TimestampEvent(Name=BallTracking, Value="(0.3407071, 0.2501514)")
                -> MulticastSubject Events
                -> WorkflowOutput
            -> Bonsai.Shaders.UpdateUniform(UniformName=shift, ShaderName=Ball)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Ball, MeshName=sprite)
            -> WorkflowOutput
        #6, #17 -> TakeUntil
        -> LastOrDefault
        -> WorkflowOutput
        #22 -> MemberSelector(Selector=Source.Body) => #21
        SubscribeSubject EscapeForce => #23
        #23, #21 -> CombineLatest
        -> SkipWhile
            WorkflowInput Source1

            SubscribeSubject TrialBallType
            -> Equal(Operand=StringProperty(Value=StableBall))
            -> WorkflowOutput
        -> Take(Count=1)
        -> InputMapping(Selector=Source.Item2, Force(selector="Source.Item1.X,Source.Item1.Y,Source.Item1.Z"))
        -> Bonsai.Physics.AddForce(Force(X=-0.065483756363391876, Y=0.04595516249537468, Z=3.1743279578222428E-06), Position=nil, RelativeForce=false, RelativePosition=false)
    #5, #31 -> SubscribeWhen => #0
    -> Condition DrinkTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=DrinkTrial))
        -> WorkflowOutput
    -> SelectMany DrinkTrial => #25
        WorkflowInput Source1 => #7
        -> SelectMany AvailabilityTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=100)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
            -> Last
            -> Unit
            -> WorkflowOutput
        -> StringProperty(Value=MissedTrial) => #1
        #7 -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=DrinkStart)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> NestedWorkflow LedOn
            WorkflowInput Source1
            -> IntProperty(Value=5)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
            -> Take(Count=1)
            -> Unit
            -> WorkflowOutput
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=DrinkBeamBreak)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> StringProperty(Value=DrinkReward) => #0
        #0, #1 -> Amb
        -> WorkflowOutput
    #0 -> Condition FoodTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=FoodTrial))
        -> WorkflowOutput
    -> NestedWorkflow FoodTrial => #28
        WorkflowInput Source1 => #6
        -> SelectMany AvailabilityTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.35S, Period=PT0.5S, Count=80) => #0
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
            -> Last => #4
            -> Unit
            -> WorkflowOutput
            #4 -> BooleanProperty(Value=false)
            -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
            #0 -> BooleanProperty(Value=true)
            -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
        -> StringProperty(Value=MissedTrial) => #1
        #6 -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodStart)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM12, Pin=6)
            -> Take(Count=1) => #1
            -> Unit
            -> WorkflowOutput
            #1 -> BooleanProperty(Value=false)
            -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodBeamBreak)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> StringProperty(Value=FoodReward) => #0
        #0, #1 -> Amb
        -> WorkflowOutput
    #25, #28 -> Merge
    -> Sink ShutOffPokes => #29
        WorkflowInput Source1
        -> NestedWorkflow DrinkLedOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
            -> WorkflowOutput
        -> SelectMany DrinkToneOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
            -> WorkflowOutput
        -> NestedWorkflow FoodLedOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=5)
            -> WorkflowOutput
        -> SelectMany FoodToneOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Condition DrinkReward
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=DrinkReward))
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> Last
        -> WorkflowOutput
    -> SelectMany DeliverDrink
        WorkflowInput Source1
        -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=15)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=2)
        -> Last
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialEnd, Value=Drink)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Unit => #22
    #29 -> Condition FoodReward
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=FoodReward))
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2) => #4
        -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
        -> Last => #0
        -> WorkflowOutput
        #0 -> BooleanProperty(Value=false)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
        #4 -> BooleanProperty(Value=true)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=8)
    -> NestedWorkflow PelletDispenser
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=4)
        -> Delay(DueTime=PT0.5S)
        -> BooleanProperty(Value=false)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=4)
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialEnd, Value=Food)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Unit => #23
    #29 -> Condition MissedTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=MissedTrial))
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialEnd, Value=Missed)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Unit => #24
    #22, #23, #24 -> Merge
    -> WorkflowOutput

    WorkflowInput Source1 => #33
    -> MemberSelector(Selector=Source.Item1)
    -> Sink RecordEvent
        WorkflowInput Source1
        -> InputMapping(Value)
        -> Bonsai.Videogame.TimestampEvent(Name=TrialRewardType, Value=FoodTrial)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> ReplaySubject TrialRewardType(BufferSize=1)
    #33 -> MemberSelector(Selector=Source.Item2)
    -> Sink RecordEvent
        WorkflowInput Source1
        -> InputMapping(Value)
        -> Bonsai.Videogame.TimestampEvent(Name=TrialBallType, Value=MovingBall)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> ReplaySubject TrialBallType(BufferSize=1)
-> Concat
-> Repeat => #58
#58, #82 -> SubscribeWhen
-> Index
-> Bonsai.Scripting.ExpressionTransform => #55
  Expression: Index*2+2
#55, #56 -> TakeUntil
-> LastOrDefault
-> NestedWorkflow ShutOffPokes
    WorkflowInput Source1
    -> NestedWorkflow DrinkLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany DrinkToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> WorkflowOutput
    -> NestedWorkflow FoodLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=5)
        -> WorkflowOutput
    -> SelectMany FoodToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
        -> WorkflowOutput
    -> WorkflowOutput

Bonsai.Shaders.UpdateFrame => #78
-> Take(Count=1) => #77
-> Bonsai.Shaders.WarpPerspective
  Destination(Point2f(X=-0.7262397, Y=-0.965328455), Point2f(X=-0.7262397, Y=0.914233565), Point2f(X=0.7427686, Y=0.9087591), Point2f(X=0.7376033, Y=-0.961678863))
-> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Ball)
-> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Debug)
-> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Walls)
#77 -> Bonsai.Vision.LoadImage(FileName=textures\walls.png, Mode=Unchanged)
-> Bonsai.Shaders.UpdateTexture(TextureName=walls, InternalFormat=Rgba)
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Threshold(ThresholdValue=10, MaxValue=255, ThresholdType=Binary)
-> Bonsai.Vision.FindContours(Mode=List, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.ApproximatePolygon(Method=DouglasPeucker, Eps=1, Recursive=true)
-> Bonsai.Vision.BinaryRegionAnalysis
-> SelectMany CreateWalls
    WorkflowInput Source1 => #0
    -> Concat
    -> MemberSelector(Selector=Source.Contour) => #1
    #0 -> MemberSelector(Selector=Source.ImageSize) => #6
    #6, #1 -> CombineLatest
    -> InputMapping(Selector=Source.Item2, ImageSize(selector=Source.Item1))
    -> Bonsai.Videogame.CreateContourTriMesh(ImageSize(Width=1210, Height=1210), Depth=10, FlipContour=nil)
    -> SelectMany CreateCollider
        WorkflowInput Source1 => #0
        SubscribeSubject Space => #3
        #0, #3 -> Zip
        -> InputMapping(Selector=Source.Item2, Data(selector=Source.Item1))
        -> Bonsai.Physics.Collision.CreateTriMesh(Enabled=true, CategoryBits=2, CollideBits=5, Material=Rock, Position=nil, Orientation=nil)
        -> WorkflowOutput
    -> WorkflowOutput
-> Timestamp
#78 -> MemberSelector(Selector=Source.EventArgs.Time) => #83
-> Bonsai.Physics.Collision.CreateHashSpace
  MaxContacts=1
  ExcludeConnected=true
  CollisionHandlers
    CollisionHandler
      Material1=Rock
      Material2=Rock
      CollisionSurface(Mode=Bounce, Mu=0, Mu2=0, Rho=0, Rho2=0, RhoN=0, Bounce=0.9, BounceVelocity=0, SoftErp=0, SoftCfm=0, Motion1=0, Motion2=0, MotionN=0, Slip1=0, Slip2=0)
-> BehaviorSubject Space
#83 -> Bonsai.Physics.CreateWorld(Gravity(X=0, Y=0, Z=0), StepSize=0.016, Cfm=1E-10, Erp=0.2)
-> ReplaySubject World(BufferSize=nil)

Bonsai.Videogame.RandomGenerator(Seed=nil)
-> Bonsai.Videogame.RandomPosition(Minimum=nil, Maximum=nil)
-> BehaviorSubject BallPosition
