WorkflowBuilder(Version=2.3.0)
Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=DrinkPokeActivity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")

Bonsai.PointGrey.FlyCapture(Index=0, ColorFormat=Rgb, ColorProcessing=NearestNeighbor)
-> Timestamp => #5
SubscribeSubject EndTrigger
-> Delay(DueTime=PT1S) => #41
#5, #41 -> TakeUntil
-> Bonsai.IO.CsvWriter
  FileName=Video.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false
  Selector="Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter"
-> MemberSelector(Selector=Source.Value.Image)
-> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
-> NestedWorkflow Tracking
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=164, Y=91, Width=1280, Height=1024))
    -> Bonsai.Vision.Resize(Size(Width=640, Height=512), Interpolation=Linear) => #12
    -> Bonsai.Scripting.PythonTransform
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *

        @returns(IplImage)
        def process(value):
          green = IplImage(value.Size,value.Depth,1)
          CV.Split(value,None,green,None,None)
          return green
    -> Bonsai.Vision.Undistort
      Alpha=0
      ComputeOptimalMatrix=false
      FocalLength(X=1000, Y=1000)
      PrincipalPoint(X=317, Y=254)
      RadialDistortion(X=-0.3, Y=0, Z=0)
      TangentialDistortion(X=0, Y=-0.01)
    -> Bonsai.Vision.Threshold(ThresholdValue=18, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector="Source.Centroid,Source.Contour") => #7
    #12 -> MemberSelector(Selector=Source.Size) => #10
    #7, #10 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        2 * Item1.Item1.X / Item2.Width - 1 as X,
        2 * Item1.Item1.Y / Item2.Height - 1 as Y,
        Item1.Item2 as Contour,
        Item2 as ImageSize)
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=Tracking.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.X,Source.Y")

SubscribeSubject Events
-> Bonsai.IO.CsvWriter(FileName=Events.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
-> NestedWorkflow SaveEvents
    WorkflowInput Source1
    -> GroupBy(KeySelector=Source.Name)
    -> SelectMany SaveEventFile
        WorkflowInput Source1
        -> AsyncSubject Sequence

        SubscribeSubject Sequence
        -> Merge => #8
        SubscribeSubject Sequence
        -> Bonsai.Scripting.ExpressionTransform
          Expression: "events/"+Key+".csv"
        -> ExternalizedPropertyOfStringCsvWriter FileName(MemberName=FileName) => #6
        #8, #6 -> Bonsai.IO.CsvWriter(FileName=events/VideoStop.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")
        -> WorkflowOutput

Timer(DueTime=PT5S, Period=PT0S)
-> Bonsai.Scripting.PythonTransform
  Script:
    import os
    import clr
    clr.AddReference("Bonsai.System")
    from Bonsai.IO import PathHelper, PathSuffix

    filename = 'Video.avi'

    def process(value):
      #filename = PathHelper.AppendSuffix(filename, PathSuffix.FileCount)
      os.system(r'ffmpeg -f rawvideo -vcodec rawvideo -s 1600x1200 -r 120 -pix_fmt rgb24 -i \\.\pipe\video -c:v h264_nvenc -preset fast -vb 20M {0}'.format(filename))

Bonsai.Arduino.DigitalInput(PortName=COM12, Pin=6)
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=FoodPokeActivity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")

Bonsai.Shaders.RenderFrame => #24
SubscribeSubject Ephys
-> Unit => #36
Bonsai.Windows.Input.KeyDown(Filter=S)
-> Unit => #37
#36, #37 -> Merge
-> Bonsai.Videogame.TimestampEvent(Name=VideoStart)
-> MulticastSubject Events => #25
#24, #25 -> SubscribeWhen
-> Bonsai.Shaders.DrawMesh(ShaderName=Background, MeshName=background)
-> Bonsai.Shaders.DrawMesh(ShaderName=Trigger, MeshName=background) => #16
Bonsai.Windows.Input.KeyDown(Filter=Z)
-> Bonsai.Videogame.TimestampEvent(Name=VideoStop)
-> MulticastSubject Events
-> Bonsai.Shaders.SampleOnUpdateFrame => #46
#16, #46 -> TakeUntil
-> TakeLast(Count=1)
-> PublishSubject EndTrigger

Bonsai.Ephys.Rhd2000EvalBoard => #33
  BitFileName=rhd2000.bit
  SampleRate=SampleRate30000Hz
  FastSettle=false
  LowerBandwidth=0.1
  UpperBandwidth=7500
  DspCutoffFrequency=1
  DspEnabled=true
  CableDelayA=nil
  CableDelayB=nil
  CableDelayC=nil
  CableDelayD=nil
Bonsai.Windows.Input.KeyDown(Filter=E)
-> Bonsai.Videogame.TimestampEvent(Name=EphysStart)
-> BehaviorSubject Events => #9
#33, #9 -> SubscribeWhen => #32
Bonsai.Windows.Input.KeyDown(Filter=End)
-> Bonsai.Videogame.TimestampEvent(Name=EphysStop)
-> MulticastSubject Events => #51
#32, #51 -> TakeUntil => #52
-> MemberSelector(Selector=Source.BufferCapacity)
#52 -> MemberSelector(Selector=Source.TtlIn)
-> Bonsai.Dsp.MatrixWriter(Path=Sync.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
#52 -> MemberSelector(Selector=Source.AmplifierData)
-> Bonsai.Dsp.MatrixWriter(Path=Amplifier.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
-> PublishSubject Ephys

Bonsai.Videogame.RandomGenerator(Seed=nil)
-> Delay(DueTime=PT3S)
-> AsyncSubject Random

Bonsai.Windows.Input.KeyDown(Filter=Z) => #60
SubscribeSubject Random
-> Bonsai.Videogame.ShuffleNames
  TrialCount=100
  Names(WeightedOfString(Weight=0.35, Value=DrinkTrial), WeightedOfString(Weight=0.35, Value=FoodTrial), WeightedOfString(Weight=0.3, Value=DrinkFoodTrial))
-> Concat
-> WindowWorkflow Trial
    SubscribeSubject Random => #1
    SubscribeSubject TrialType => #5
    ExternalizedPropertyOfDoubleExponentialTimer Mean(MemberName=Mean, Value=1000) => #10
    ExternalizedPropertyOfDoubleExponentialTimer Offset(MemberName=Offset, Value=1000) => #11
    #1, #10, #11 -> Bonsai.Videogame.ExponentialTimer(Mean=1000, Offset=1000)
    -> Sink RecordEvent => #12
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialStart)
        -> MulticastSubject Events
        -> WorkflowOutput
    #5, #12 -> SubscribeWhen => #0
    -> Condition DrinkTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=DrinkTrial))
        -> WorkflowOutput
    -> SelectMany DrinkTrial => #28
        WorkflowInput Source1 => #7
        -> SelectMany AvailabilityTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=nil)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
            -> Last
            -> Unit
            -> WorkflowOutput
        -> StringProperty(Value=MissedTrial) => #1
        #7 -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=DrinkStart)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> NestedWorkflow LedOn
            WorkflowInput Source1
            -> IntProperty(Value=5)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
            -> Take(Count=1)
            -> Unit
            -> WorkflowOutput
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=DrinkBeamBreak)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> StringProperty(Value=DrinkReward) => #0
        #0, #1 -> Amb
        -> WorkflowOutput
    #0 -> Condition FoodTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=FoodTrial))
        -> WorkflowOutput
    -> NestedWorkflow FoodTrial => #31
        WorkflowInput Source1 => #6
        -> SelectMany AvailabilityTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.35S, Period=PT0.5S, Count=nil)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
            -> Last
            -> Unit
            -> WorkflowOutput
        -> StringProperty(Value=MissedTrial) => #1
        #6 -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodStart)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM12, Pin=6)
            -> Take(Count=1)
            -> Unit
            -> WorkflowOutput
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodBeamBreak)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> StringProperty(Value=FoodReward) => #0
        #0, #1 -> Amb
        -> WorkflowOutput
    #0 -> Condition DrinkFoodTrial => #33
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=DrinkFoodTrial))
        -> WorkflowOutput
    -> SelectMany DrinkTrial => #21
        WorkflowInput Source1 => #7
        -> SelectMany AvailabilityTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=nil)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
            -> Last
            -> Unit
            -> WorkflowOutput
        -> StringProperty(Value=MissedTrial) => #1
        #7 -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=DrinkStart)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> NestedWorkflow LedOn
            WorkflowInput Source1
            -> IntProperty(Value=5)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
            -> Take(Count=1)
            -> Unit
            -> WorkflowOutput
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=DrinkBeamBreak)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> StringProperty(Value=DrinkReward) => #0
        #0, #1 -> Amb
        -> WorkflowOutput
    #33 -> NestedWorkflow FoodTrial => #29
        WorkflowInput Source1 => #6
        -> SelectMany AvailabilityTone
            WorkflowInput Source1
            -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.35S, Period=PT0.5S, Count=nil)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
            -> Last
            -> Unit
            -> WorkflowOutput
        -> StringProperty(Value=MissedTrial) => #1
        #6 -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodStart)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> SelectMany BeamBreak
            Bonsai.Arduino.DigitalInput(PortName=COM12, Pin=6)
            -> Take(Count=1)
            -> Unit
            -> WorkflowOutput
        -> Sink RecordEvent
            WorkflowInput Source1
            -> Bonsai.Videogame.TimestampEvent(Name=FoodBeamBreak)
            -> MulticastSubject Events
            -> WorkflowOutput
        -> StringProperty(Value=FoodReward) => #0
        #0, #1 -> Amb
        -> WorkflowOutput
    #21, #29 -> Amb => #32
    #28, #31, #32 -> Merge
    -> Sink ShutOffPokes => #34
        WorkflowInput Source1
        -> NestedWorkflow DrinkLedOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
            -> WorkflowOutput
        -> SelectMany DrinkToneOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
            -> WorkflowOutput
        -> NestedWorkflow FoodLedOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=5)
            -> WorkflowOutput
        -> SelectMany FoodToneOff
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Condition DrinkReward
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=DrinkReward))
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> Last
        -> WorkflowOutput
    -> SelectMany DeliverDrink
        WorkflowInput Source1
        -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=15)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=2)
        -> Last
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=DrinkEnd)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Unit => #25
    #34 -> Condition FoodReward
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=FoodReward))
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
        -> Last
        -> WorkflowOutput
    -> NestedWorkflow PelletDispenser
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=4)
        -> Delay(DueTime=PT0.5S)
        -> BooleanProperty(Value=false)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM12, Pin=4)
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=FoodEnd)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Unit => #26
    #34 -> Condition MissedTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=MissedTrial))
        -> WorkflowOutput
    -> Unit => #27
    #25, #26, #27 -> Merge
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Videogame.TimestampEvent(Name=TrialEnd)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> WorkflowOutput

    WorkflowInput Source1
    -> Sink RecordEvent
        WorkflowInput Source1
        -> InputMapping(Value)
        -> Bonsai.Videogame.TimestampEvent(Name=TrialType, Value=FoodTrial)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> ReplaySubject TrialType(BufferSize=1)
-> Concat
-> Repeat
-> Index
-> Bonsai.Scripting.ExpressionTransform => #59
  Expression: Index*2+2
#59, #60 -> TakeUntil
-> LastOrDefault
-> NestedWorkflow ShutOffPokes
    WorkflowInput Source1
    -> NestedWorkflow DrinkLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany DrinkToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> WorkflowOutput
    -> NestedWorkflow FoodLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=5)
        -> WorkflowOutput
    -> SelectMany FoodToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM12, Pin=3)
        -> WorkflowOutput
    -> WorkflowOutput
