WorkflowBuilder(Version=2.3.0)
Bonsai.Shaders.UpdateFrame => #0
-> Bonsai.Shaders.DrawMesh(ShaderName=Background, MeshName=background)
-> Bonsai.Shaders.DrawMesh(ShaderName=Trigger, MeshName=background)
#0 -> Take(Count=1)
-> Bonsai.Shaders.WarpPerspective
  Destination(Point2f(X=-0.7262397, Y=-0.965328455), Point2f(X=-0.7262397, Y=0.914233565), Point2f(X=0.7427686, Y=0.9087591), Point2f(X=0.7376033, Y=-0.961678863))
-> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Ball)

Timer(DueTime=PT5S, Period=PT0S)
-> Bonsai.Scripting.PythonTransform
  Script:
    import os
    import clr
    clr.AddReference("Bonsai.System")
    from Bonsai.IO import PathHelper, PathSuffix

    filename = 'video.mp4'

    def process(value):
      os.system(r'ffmpeg -f rawvideo -vcodec rawvideo -s 1600x1200 -r 60 -pix_fmt rgb24 -i \\.\pipe\video -c:v h264_nvenc -preset fast -vb 20M {0}'.format(filename))

SubscribeSubject Events
-> Bonsai.IO.CsvWriter(FileName=events.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
-> NestedWorkflow SaveEvents
    WorkflowInput Source1 => #0
    -> Condition LightPosition => #1
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.StartsWith("Position")
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform
      Script:
        from System import Tuple, DateTimeOffset

        start = 9

        @returns(Tuple[DateTimeOffset,str,str])
        def process(value):
          sub = value.Name.Substring(9).TrimEnd(')')
          pos = sub.Split(',')
          return Tuple.Create(value.Timestamp,pos[0],pos[1])
    -> Bonsai.IO.CsvWriter(FileName=events\LightPosition.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="")
    #0, #1 -> SkipUntil
    -> Condition LightTouched
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.EndsWith("PokeAvailable")
        -> WorkflowOutput
    -> Bonsai.IO.CsvWriter(FileName=events\LightTouched.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector=Source.Timestamp)
    #0 -> Condition TrialStart
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.EndsWith("TrialStart")
        -> WorkflowOutput
    -> Bonsai.IO.CsvWriter(FileName=events\TrialStart.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector=Source.Timestamp)
    #0 -> Condition BeamBreak
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.EndsWith("BeamBreak")
        -> WorkflowOutput
    -> Bonsai.IO.CsvWriter(FileName=events\BeamBreak.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector=Source.Timestamp)

Bonsai.Videogame.RandomGenerator(Seed=nil)
-> Delay(DueTime=PT3S)
-> AsyncSubject Random

Bonsai.Windows.Input.KeyDown(Filter=Z) => #28
Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany StartTrial
    Bonsai.Windows.Input.KeyDown(Filter=L) => #0
    SubscribeSubject Random
    -> Bonsai.Videogame.RandomName(Names(string=Ball, string=NoBall)) => #1
    #1, #0 -> SubscribeWhen
    -> WorkflowOutput

    WorkflowInput Source1
-> SelectMany LeftTrial
    WorkflowInput Source1
    -> Sink RecordEvent => #8
        WorkflowInput Source1
        -> Timestamp => #2
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftTrialStart" as Name
            )
        #2 -> Bonsai.Scripting.ExpressionTransform => #4
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftPokeAvailable" as Name
            )
        #3, #4 -> Merge
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Condition BallTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Ball))
        -> WorkflowOutput
    -> SelectMany Ball => #12
        WorkflowInput Source1

        SubscribeSubject Space => #3
        SubscribeSubject Random
        -> NestedWorkflow FixedPosition
            WorkflowInput Source1
            -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
            -> WorkflowOutput
        -> Sink RecordStimulus
            WorkflowInput Source1
            -> Timestamp
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Timestamp as Timestamp,
                "Position"+Value.ToString() as Name
                )
            -> MulticastSubject Events
            -> WorkflowOutput
        -> PropertyMapping(Position(selector="Source.X,Source.Y,Source.Z")) => #6
        #3, #6 -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=2, CollideBits=1, Position=nil, Orientation=nil, Radius=0.5) => #13
        -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=true)
        -> Unit
        -> WorkflowOutput
        #13 -> SelectMany Loom
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=Source.EventArgs.Time)
            -> Accumulate
            -> Bonsai.Dsp.Rescale(Min=0, Max=0.25, RangeMin=0, RangeMax=0.8, RescaleType=Clamp)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> MemberSelector(Selector="Source,Source")
            -> Bonsai.Shaders.UpdateUniform(UniformName=scale, ShaderName=Ball)
            -> WorkflowOutput
        -> Bonsai.Shaders.DrawMesh(ShaderName=Ball, MeshName=sprite)

        FloatProperty(Value=0.6)
        -> Bonsai.Shaders.UpdateUniform(UniformName=smoothness, ShaderName=Ball)
    #8 -> Condition NoBallTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=NoBall))
        -> WorkflowOutput
    -> SelectMany DoNothing => #25
        BooleanProperty(Value=false)
        -> Skip(Count=1)
        -> Unit
        -> WorkflowOutput
    #12, #25 -> Merge
    -> PublishSubject Hit
    -> IgnoreElements => #31
    #8 -> Delay(DueTime=PT1S) => #27
    -> NestedWorkflow LedOn
        WorkflowInput Source1
        -> IntProperty(Value=5)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany BeamBreak
        Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
        -> Take(Count=1)
        -> Unit
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftBeamBreak" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #13
    #27 -> SelectMany AvailabilityTone => #7
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=nil)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> Last
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    SubscribeSubject Hit
    -> Take(Count=1)
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "TouchBar" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #14
    #13, #7, #14 -> Amb
    -> Sink LedOff => #15
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> Condition Success
        WorkflowInput Source1
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftTrialSuccess" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> Last
        -> WorkflowOutput
    -> SelectMany DeliverReward => #6
        WorkflowInput Source1
        -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=15)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=2)
        -> Last
        -> Unit
        -> WorkflowOutput
    #15 -> Condition Failure
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftTrialFailure" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> SelectMany ToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> WorkflowOutput
    -> SelectMany BeamBreak => #28
        Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
        -> Take(Count=1) => #2
        Timer(DueTime=PT5S, Period=PT0S) => #4
        #2, #4 -> TakeUntil
        -> LastOrDefault
        -> Unit
        -> WorkflowOutput
    #6, #28 -> Merge
    -> Sink RecordEvent => #11
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "LeftTrialEnd" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    #31, #11 -> TakeUntil
    -> LastOrDefault
    -> WorkflowOutput
-> SelectMany StartTrial
    Bonsai.Windows.Input.KeyDown(Filter=L) => #0
    SubscribeSubject Random
    -> Bonsai.Videogame.RandomName(Names(string=Ball, string=NoBall)) => #1
    #1, #0 -> SubscribeWhen
    -> WorkflowOutput

    WorkflowInput Source1
-> SelectMany RightTrial
    WorkflowInput Source1

    SubscribeSubject Hit
    -> Take(Count=1)
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "TouchBar" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #14
    SubscribeSubject TrialType
    -> Sink RecordEvent => #8
        WorkflowInput Source1
        -> Timestamp => #2
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression:
            new(
            Timestamp as Timestamp,
            "RightTrialStart" as Name
            )
        #2 -> Bonsai.Scripting.ExpressionTransform => #4
          Expression:
            new(
            Timestamp as Timestamp,
            "RightPokeAvailable" as Name
            )
        #3, #4 -> Merge
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Condition BallTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Ball))
        -> WorkflowOutput
    -> SelectMany Ball => #12
        WorkflowInput Source1

        SubscribeSubject Space => #3
        SubscribeSubject Random
        -> NestedWorkflow FixedPosition
            WorkflowInput Source1
            -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
            -> WorkflowOutput
        -> Sink RecordStimulus
            WorkflowInput Source1
            -> Timestamp
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Timestamp as Timestamp,
                "Position"+Value.ToString() as Name
                )
            -> MulticastSubject Events
            -> WorkflowOutput
        -> PropertyMapping(Position(selector="Source.X,Source.Y,Source.Z")) => #6
        #3, #6 -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=2, CollideBits=1, Position=nil, Orientation=nil, Radius=0.5) => #13
        -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=true)
        -> Unit
        -> WorkflowOutput
        #13 -> SelectMany Loom
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=Source.EventArgs.Time)
            -> Accumulate
            -> Bonsai.Dsp.Rescale(Min=0, Max=0.25, RangeMin=0, RangeMax=0.8, RescaleType=Clamp)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> MemberSelector(Selector="Source,Source")
            -> Bonsai.Shaders.UpdateUniform(UniformName=scale, ShaderName=Ball)
            -> WorkflowOutput
        -> Bonsai.Shaders.DrawMesh(ShaderName=Ball, MeshName=sprite)

        FloatProperty(Value=0.6)
        -> Bonsai.Shaders.UpdateUniform(UniformName=smoothness, ShaderName=Ball)
    #8 -> Condition NoBallTrial
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=NoBall))
        -> WorkflowOutput
    -> SelectMany DoNothing => #25
        BooleanProperty(Value=false)
        -> Skip(Count=1)
        -> Unit
        -> WorkflowOutput
    #12, #25 -> Merge
    -> PublishSubject Hit
    -> IgnoreElements => #30
    #8 -> Delay(DueTime=PT1S) => #36
    -> NestedWorkflow LedOn
        WorkflowInput Source1
        -> IntProperty(Value=5)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=5)
        -> WorkflowOutput
    -> SelectMany BeamBreak
        Bonsai.Arduino.DigitalInput(PortName=COM4, Pin=6)
        -> Take(Count=1)
        -> Unit
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "RightBeamBreak" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #13
    #36 -> SelectMany AvailabilityTone => #7
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=nil)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=3)
        -> Last
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    #13, #7, #14 -> Amb
    -> Sink LedOff => #15
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=5)
        -> WorkflowOutput
    -> Condition Success
        WorkflowInput Source1
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "RightTrialSuccess" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=3)
        -> Last
        -> WorkflowOutput
    -> SelectMany DeliverReward => #6
        WorkflowInput Source1
        -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=15)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=2)
        -> Last
        -> Unit
        -> WorkflowOutput
    #15 -> Condition Failure
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "RightTrialFailure" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    -> SelectMany ToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=3)
        -> WorkflowOutput
    -> SelectMany BeamBreak => #27
        Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
        -> Take(Count=1) => #2
        Timer(DueTime=PT5S, Period=PT0S) => #4
        #2, #4 -> TakeUntil
        -> LastOrDefault
        -> Unit
        -> WorkflowOutput
    #6, #27 -> Merge
    -> Sink RecordEvent => #11
        WorkflowInput Source1
        -> Timestamp
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Timestamp as Timestamp,
            "RightTrialEnd" as Name
            )
        -> MulticastSubject Events
        -> WorkflowOutput
    #30, #11 -> TakeUntil
    -> LastOrDefault
    -> WorkflowOutput

    SubscribeSubject Random
    -> Bonsai.Videogame.RandomName(Names(string=Ball, string=NoBall))
    -> BehaviorSubject TrialType
-> Repeat
-> Index
-> Bonsai.Scripting.ExpressionTransform => #27
  Expression: Index*2+2
#27, #28 -> TakeUntil
-> LastOrDefault
-> SelectMany EndSession
    WorkflowInput Source1
    -> NestedWorkflow LeftLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany LeftToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> WorkflowOutput
    -> NestedWorkflow RightLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=5)
        -> WorkflowOutput
    -> SelectMany RightToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM4, Pin=3)
        -> WorkflowOutput
    -> WorkflowOutput

Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=left_poke_activity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")

Bonsai.Arduino.DigitalInput(PortName=COM4, Pin=6)
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=right_poke_activity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")

Bonsai.Shaders.UpdateFrame
-> Bonsai.Physics.Collision.CreateHashSpace(MaxContacts=1, ExcludeConnected=true, CollisionHandlers="")
-> BehaviorSubject Space

Bonsai.Windows.Input.KeyDown(Filter=Z) => #48
Bonsai.PointGrey.FlyCapture(Index=0, ColorFormat=Rgb, ColorProcessing=NearestNeighbor)
-> Timestamp => #47
#47, #48 -> TakeUntil => #46
-> Take(Count=1)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    Timestamp as Timestamp,
    "SessionStart" as Name
    )
-> BehaviorSubject Events
#46 -> Bonsai.IO.CsvWriter
  FileName=video.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false
  Selector="Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter"
-> MemberSelector(Selector=Source.Value.Image)
-> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
-> NestedWorkflow Tracking
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=164, Y=91, Width=1280, Height=1024))
    -> Bonsai.Vision.Resize(Size(Width=640, Height=512), Interpolation=Linear) => #12
    -> Bonsai.Scripting.PythonTransform
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *

        @returns(IplImage)
        def process(value):
          green = IplImage(value.Size,value.Depth,1)
          CV.Split(value,None,green,None,None)
          return green
    -> Bonsai.Vision.Undistort
      Alpha=0
      ComputeOptimalMatrix=false
      FocalLength(X=1000, Y=1000)
      PrincipalPoint(X=317, Y=254)
      RadialDistortion(X=-0.3, Y=0, Z=0)
      TangentialDistortion(X=0, Y=-0.01)
    -> Bonsai.Vision.Threshold(ThresholdValue=15, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector="Source.Centroid,Source.Contour") => #7
    #12 -> MemberSelector(Selector=Source.Size) => #10
    #7, #10 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        2 * Item1.Item1.X / Item2.Width - 1 as X,
        2 * Item1.Item1.Y / Item2.Height - 1 as Y,
        Item1.Item2 as Contour,
        Item2 as ImageSize)
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=tracking.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.X,Source.Y")
-> InputMapping(Selector=Source.Contour, ImageSize(selector=Source.ImageSize))
-> Bonsai.Videogame.CreateContourTriMesh(ImageSize(Width=640, Height=512), Depth=10, FlipContour=nil)
-> Bonsai.Shaders.SampleOnUpdateFrame
-> WindowWorkflow CreateCollider
    WorkflowInput Source1
    -> Condition CheckNotNull => #4
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it != null
        -> WorkflowOutput
    SubscribeSubject Space => #3
    #4, #3 -> Zip
    -> InputMapping(Selector=Source.Item2, Data(selector=Source.Item1))
    -> Bonsai.Physics.Collision.CreateTriMesh(Enabled=true, CategoryBits=1, CollideBits=nil, Position=nil, Orientation=nil)
    -> WorkflowOutput
-> Switch
