WorkflowBuilder(Version=2.3.0)
Bonsai.Shaders.UpdateFrame
-> Bonsai.Shaders.DrawMesh(ShaderName=Background, MeshName=background)
-> Bonsai.Shaders.DrawMesh(ShaderName=Trigger, MeshName=background)
-> TimeInterval
-> Bonsai.IO.CsvWriter(FileName=updatedelta.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector=Source.Interval.TotalMilliseconds)

Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=left_poke_activity.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")

Bonsai.PointGrey.FlyCapture(Index=0, ColorFormat=Rgb, ColorProcessing=NearestNeighbor)
-> Timestamp => #4
SubscribeSubject Ephys => #32
#4, #32 -> SubscribeWhen => #30
Bonsai.Windows.Input.KeyDown(Filter=Z) => #33
#30, #33 -> TakeUntil => #36
-> Take(Count=1)
-> Bonsai.Videogame.TimestampEvent(Name=SessionStart)
-> BehaviorSubject Events
#36 -> Bonsai.IO.CsvWriter
  FileName=counter.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false
  Selector="Source.Timestamp,Source.Value.Metadata.embeddedFrameCounter"
-> MemberSelector(Selector=Source.Value.Image)
-> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
-> Bonsai.Vision.Crop(RegionOfInterest(X=164, Y=91, Width=1280, Height=1024))
-> Bonsai.Videogame.ColorLedTracking(ThresholdRed=100, ThresholdBlue=156) => #58
-> Bonsai.IO.CsvWriter(FileName=tracking.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
-> Bonsai.Videogame.UndistortPoints(FocalLength(X=2000, Y=2000), PrincipalPoint(X=636, Y=508), RadialDistortion(X=0, Y=0, Z=0), TangentialDistortion(X=0, Y=0.05))
-> Bonsai.Videogame.LedRegionAnalysis(AngleOffset=1, KeepLatest=true)
-> Bonsai.IO.CsvWriter(FileName=tracking_undistort.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
-> BehaviorSubject Head
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    2 * Centroid.X / 1280 - 1 as X,
    2 * Centroid.Y / 1024 - 1 as Y,
    single(Orientation) as Angle)
-> NestedWorkflow Ball
    WorkflowInput Source1
    -> Sink UpdateAngle
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.Angle)
        -> Bonsai.Shaders.UpdateUniform(UniformName=angle, ShaderName=Debug)
        -> WorkflowOutput
    -> InputMapping(X(selector=Source.X), Y(selector=Source.Y))
    -> Bonsai.Shaders.CreateVector3(X=-0.326816738, Y=-0.403042674, Z=0)
    -> PropertyMapping(Position(selector="Source.X,Source.Y,Source.Z")) => #7
    SubscribeSubject Space
    -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=1, CollideBits=nil, Position(X=0, Y=0, Z=0), Orientation(W=1, X=0, Y=0, Z=0), Radius=0.0375)
    -> Bonsai.Shaders.LatestOnUpdateFrame => #14
    #14, #7 -> Bonsai.Physics.SetTransform(Position(X=-0.32681673765182495, Y=-0.40304267406463623, Z=0), Orientation=nil)
    -> Bonsai.Scripting.ExpressionTransform => #4
      Expression:
        new(
        single(Position.X) as X,
        single(Position.Y) as Y,
        single(Radius*2) as Radius)
    -> MemberSelector(Selector="Source.Radius,Source.Radius")
    -> Bonsai.Shaders.UpdateUniform(UniformName=scale, ShaderName=Debug) => #6
    #4 -> MemberSelector(Selector="Source.X,Source.Y")
    -> Bonsai.Shaders.UpdateUniform(UniformName=shift, ShaderName=Debug) => #9
    #6, #9 -> Zip
    -> WorkflowOutput
#58 -> Bonsai.Videogame.LedRegionAnalysis(AngleOffset=1, KeepLatest=true)

Bonsai.Videogame.RandomGenerator(Seed=nil)
-> Delay(DueTime=PT3S)
-> AsyncSubject Random

Bonsai.Shaders.UpdateFrame
-> Bonsai.Physics.Collision.CreateHashSpace(MaxContacts=1, ExcludeConnected=true, CollisionHandlers="")
-> BehaviorSubject Space

Bonsai.Shaders.UpdateFrame
-> Take(Count=1)
-> Bonsai.Shaders.WarpPerspective
  Destination(Point2f(X=-0.7262397, Y=-0.965328455), Point2f(X=-0.7262397, Y=0.914233565), Point2f(X=0.7427686, Y=0.9087591), Point2f(X=0.7376033, Y=-0.961678863))
-> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Ball)
-> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Debug)

Timer(DueTime=PT5S, Period=PT0S)
-> Bonsai.Scripting.PythonTransform
  Script:
    import os
    import clr
    clr.AddReference("Bonsai.System")
    from Bonsai.IO import PathHelper, PathSuffix

    filename = 'out.avi'

    def process(value):
      path = PathHelper.AppendSuffix(filename, PathSuffix.FileCount)
      os.system(r'ffmpeg -f rawvideo -vcodec rawvideo -s 1600x1200 -r 120 -pix_fmt rgb24 -i \\.\pipe\video -c:v h264_nvenc -preset fast -vb 20M output.avi'.format(path))

SubscribeSubject Events
-> Bonsai.IO.CsvWriter(FileName=events.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
-> NestedWorkflow SaveEvents
    WorkflowInput Source1
    -> GroupBy(KeySelector=Source.Name)
    -> SelectMany SaveEventFile
        WorkflowInput Source1
        -> AsyncSubject Sequence

        SubscribeSubject Sequence
        -> Merge => #8
        SubscribeSubject Sequence
        -> Bonsai.Scripting.ExpressionTransform
          Expression: "events/"+Key+".csv"
        -> ExternalizedPropertyOfStringCsvWriter FileName(MemberName=FileName) => #6
        #8, #6 -> Bonsai.IO.CsvWriter(FileName=events/BallPosition.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false, Selector="Source.Timestamp,Source.Value")
        -> WorkflowOutput

SubscribeSubject Random
-> Bonsai.Videogame.ShuffleNames
  TrialCount=100
  Names
    WeightedOfString(Weight=0.7, Value=Normal)
    WeightedOfString(Weight=0.05, Value=Jackpot)
    WeightedOfString(Weight=0.05, Value=Omission)
    WeightedOfString(Weight=0.05, Value=FloorTowards)
    WeightedOfString(Weight=0.05, Value=FloorAway)
    WeightedOfString(Weight=0.05, Value=BallTowards)
    WeightedOfString(Weight=0.05, Value=BallAway)
-> Concat
-> WindowWorkflow LeftTrial
    WorkflowInput Source1
    -> Sink RecordEvent
        WorkflowInput Source1
        -> InputMapping(Value(selector=Source))
        -> Bonsai.Videogame.TimestampEvent(Name=TrialStart, Value=Normal)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> AsyncSubject TrialType

    SubscribeSubject Random
    -> Bonsai.Videogame.ExponentialTimer(Mean=6000, Offset=3000)
    -> SelectMany Ball
        WorkflowInput Source1

        SubscribeSubject Space => #4
        SubscribeSubject Random
        -> Bonsai.Videogame.RandomPosition(Minimum(X=-0.75, Y=-0.75, Z=0), Maximum(X=0.75, Y=0.75, Z=0))
        -> ExternalizedPropertyOfNullableOfVector3CreateSphere(MemberName=Position, Value(X=0, Y=0, Z=0)) => #10
        #4, #10 -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=2, CollideBits=1, Position(X=0.56225258429173963, Y=0.62841432466097835, Z=0), Orientation(W=1, X=0, Y=0, Z=0), Radius=0.3)
        -> NestedWorkflow CollisionClear
            WorkflowInput Source1 => #0
            -> Bonsai.Videogame.Collide(MaxContacts=1)
            -> MemberSelector(Selector=Source.Length)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #5 -> TakeUntil
            -> Repeat
            -> WorkflowOutput
        -> Sink RecordEvent => #20
            WorkflowInput Source1
            -> Timestamp => #4
            -> Bonsai.Videogame.TimestampEvent(Name=BallOn) => #2
            #4 -> MemberSelector(Selector="Source.Value.Position.X,Source.Value.Position.Y")
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it.ToString()
            -> InputMapping(Value(selector=Source))
            -> Bonsai.Videogame.TimestampEvent(Name=BallPosition, Value="(0.56225258429174, 0.628414324660978)") => #5
            #2, #5 -> Merge => #6
            Source2=#6 -> MulticastSubject Events
            -> WorkflowOutput
        -> NestedWorkflow DrawBall => #6
            WorkflowInput Source1
            -> NestedWorkflow LatestOnRenderFrame
                Bonsai.Shaders.RenderFrame => #2
                WorkflowInput Source1 => #3
                #2, #3 -> CombineLatest => #1
                #1, #2 -> Sample
                -> WorkflowOutput
            -> MemberSelector(Selector=Source.Item2) => #5
            -> Bonsai.Scripting.ExpressionTransform => #4
              Expression:
                new(
                single(Position.X) as x,
                single(Position.Y) as y)
            #5 -> Bonsai.Scripting.ExpressionTransform
              Expression: single(0.075)
            -> MemberSelector(Selector="Source,Source")
            -> Bonsai.Shaders.UpdateUniform(UniformName=scale, ShaderName=Ball) => #3
            #3, #4 -> Zip
            -> MemberSelector(Selector="Source.Item2.x,Source.Item2.y")
            -> Bonsai.Shaders.UpdateUniform(UniformName=shift, ShaderName=Ball)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Ball, MeshName=sprite)
            -> WorkflowOutput
        #20 -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=false)
        -> Take(Count=1)
        -> MemberSelector(Selector="Source.Sender,Source.EventArgs.Geom") => #17
        SubscribeSubject TrialType
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            it == "BallTowards" ? 0.15 :
            it == "BallAway" ? -0.15 :
            0.0
        -> ExternalizedPropertyOfSingleTouchDisplacement Magnitude(MemberName=Magnitude, Value=0.075) => #13
        #17, #13 -> Bonsai.Videogame.TouchDisplacement(Magnitude=0)
        -> Sink RecordEvent
            WorkflowInput Source1
            -> MemberSelector(Selector="Source.Position.X,Source.Position.Y")
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it.ToString()
            -> InputMapping(Value(selector=Source))
            -> Bonsai.Videogame.TimestampEvent(Name=BallMoved, Value="(-0.748170347883445, -0.588489587576357)")
            -> MulticastSubject Events
            -> WorkflowOutput
        -> Bonsai.Videogame.SetRadius(Radius=0.0375)
        -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=false) => #14
        #6, #14 -> TakeUntil
        -> LastOrDefault
        -> WorkflowOutput
    -> Sink RecordEvent => #12
        WorkflowInput Source1
        -> Timestamp => #2
        -> Bonsai.Videogame.TimestampEvent(Name=LeftPokeAvailable) => #4
        #2 -> Bonsai.Videogame.TimestampEvent(Name=LightTouched) => #5
        #4, #5 -> Merge
        -> MulticastSubject Events
        -> WorkflowOutput
    -> NestedWorkflow LedOn
        WorkflowInput Source1
        -> IntProperty(Value=5)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany BeamBreak
        Bonsai.Arduino.DigitalInput(PortName=COM6, Pin=6)
        -> Take(Count=1)
        -> Unit
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #13
    #12 -> SelectMany AvailabilityTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=15, Duration=PT0.1S, Period=PT0.2S, Count=200)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> Last
        -> Unit
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #14
    #13, #14 -> Amb => #8
    -> Sink RecordEvent
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.ToString()
        -> InputMapping(Value(selector=Source))
        -> Bonsai.Videogame.TimestampEvent(Name=TrialOutcome, Value=True)
        -> MulticastSubject Events
        -> WorkflowOutput
    -> Sink LedOff => #15
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> Condition Success
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany RewardTone
        WorkflowInput Source1
        -> Bonsai.Videogame.SquareWave(Value=128, Duration=PT0.05S, Period=PT0.1S, Count=2)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> Last
        -> WorkflowOutput
    -> SelectMany DeliverReward => #6
        WorkflowInput Source1 => #0
        SubscribeSubject TrialType => #5
        #5, #0 -> SubscribeWhen => #8
        -> Condition Jackpot
            WorkflowInput Source1
            -> Equal(Operand=StringProperty)
            -> WorkflowOutput
        -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=30)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=2) => #10
        #8 -> Condition Omission
            WorkflowInput Source1
            -> Equal(Operand=StringProperty)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #12
        #8 -> Condition Normal
            WorkflowInput Source1 => #0
            -> NotEqual(Operand=StringProperty) => #2
            #0 -> NotEqual(Operand=StringProperty) => #3
            #2, #3 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> Bonsai.Videogame.WaterValve(MillilitersPerSecond=0.06, MicrolitersPerDelivery=15)
        -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=2) => #3
        #10, #12, #3 -> Merge
        -> Last
        -> WorkflowOutput
    #15 -> Condition Miss => #18
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #6, #18 -> Merge
    -> WorkflowOutput
    SubscribeSubject TrialType
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        it == "FloorTowards" ? 0.001 :
        it == "FloorAway" ? -0.001 :
        0.0
    -> SelectMany MoveFloor => #24
        SubscribeSubject Head
        -> MemberSelector(Selector=Source.Orientation)
        -> Take(Count=1)
        -> Condition => #14
            WorkflowInput Source1
            -> Bonsai.Scripting.ExpressionTransform
              Expression: !double.IsNaN(it)
            -> WorkflowOutput
        SubscribeSubject Random
        -> Bonsai.Videogame.ExponentialTimer(Mean=1000, Offset=1000) => #7
        #14, #7 -> SubscribeWhen => #9
        WorkflowInput Source1 => #10
        #9, #10 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item2 * -Math.Cos(Item1) as X,
            Item2 * Math.Sin(Item1) as Y)
        -> InputMapping(X(selector=Source.X), Y(selector=Source.Y))
        -> Bonsai.Shaders.CreateVector2(X=0, Y=0) => #3
        -> SelectMany Duration
            WorkflowInput Source1
            -> Bonsai.Shaders.LatestOnUpdateFrame => #3
            ExternalizedPropertyOfInt32Take Frames(MemberName=Count, Value=120) => #4
            #3, #4 -> Take(Count=120)
            -> WorkflowOutput
        -> Accumulate
        -> Bonsai.Shaders.UpdateUniform(UniformName=texshift, ShaderName=Background) => #0
        #0, #3, #10 -> CombineLatest
        -> WorkflowOutput
    #24, #8 -> TakeUntil
    -> Sink RecordEvent
        WorkflowInput Source1
        -> FirstOrDefault
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            it != null ?
            new(
            Item3 as Scale,
            Item2.X as X,
            Item2.Y as Y) :
            new(
            0.0 as Scale,
            single(0) as X,
            single(0) as Y)
        -> MemberSelector(Selector="Source.Scale,Source.X,Source.Y")
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.ToString()
        -> InputMapping(Value(selector=Source))
        -> Bonsai.Videogame.TimestampEvent(Name=FloorMoved, Value="(0, 0, 0)")
        -> MulticastSubject Events
        -> WorkflowOutput
-> Concat
-> Repeat
-> Index
-> Bonsai.Scripting.ExpressionTransform => #44
  Expression: Index*2+2
Bonsai.Windows.Input.KeyDown(Filter=Z) => #43
#44, #43 -> TakeUntil
-> LastOrDefault
-> SelectMany EndSession
    WorkflowInput Source1
    -> NestedWorkflow LeftLedOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=5)
        -> WorkflowOutput
    -> SelectMany LeftToneOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Bonsai.Arduino.AnalogOutput(PortName=COM6, Pin=3)
        -> WorkflowOutput
    -> WorkflowOutput

Bonsai.Ephys.Rhd2000EvalBoard => #54
  BitFileName=rhd2000.bit
  SampleRate=SampleRate30000Hz
  FastSettle=false
  LowerBandwidth=0.1
  UpperBandwidth=7500
  DspCutoffFrequency=1
  DspEnabled=true
-> MemberSelector(Selector=Source.Timestamp)
-> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=S32, Channels=1)
-> Bonsai.Dsp.MatrixWriter(Path=timestamp.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
#54 -> MemberSelector(Selector=Source.BufferCapacity)
#54 -> MemberSelector(Selector=Source.TtlIn)
-> Bonsai.Dsp.MatrixWriter(Path=sync.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
#54 -> MemberSelector(Selector=Source.AmplifierData)
-> Bonsai.Dsp.MatrixWriter(Path=amplifier.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
-> PublishSubject Ephys
