<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0-alpha2">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="q1:PythonTransform">
        <q1:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *
from System import Tuple

@returns(Tuple[IplImage,IplImage])
def process(value):
  red = IplImage(value.Size,value.Depth,1)
  green = IplImage(value.Size,value.Depth,1)
  CV.Split(value,None,green,red,None)
  return Tuple.Create(red,green)</q1:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Undistort">
          <q2:Alpha>0</q2:Alpha>
          <q2:ComputeOptimalMatrix>false</q2:ComputeOptimalMatrix>
          <q2:FocalLength>
            <q2:X>1000</q2:X>
            <q2:Y>1000</q2:Y>
          </q2:FocalLength>
          <q2:PrincipalPoint>
            <q2:X>321.5</q2:X>
            <q2:Y>256.5</q2:Y>
          </q2:PrincipalPoint>
          <q2:RadialDistortion>
            <q2:X>-0.3</q2:X>
            <q2:Y>0</q2:Y>
            <q2:Z>0</q2:Z>
          </q2:RadialDistortion>
          <q2:TangentialDistortion>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:TangentialDistortion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Crop">
          <q2:RegionOfInterest>
            <q2:X>161</q2:X>
            <q2:Y>90</q2:Y>
            <q2:Width>1286</q2:Width>
            <q2:Height>1026</q2:Height>
          </q2:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FindContours">
          <q2:Mode>External</q2:Mode>
          <q2:Method>ChainApproxNone</q2:Method>
          <q2:Offset>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:Offset>
          <q2:MinArea>200</q2:MinArea>
          <q2:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Threshold">
          <q2:ThresholdValue>18</q2:ThresholdValue>
          <q2:MaxValue>255</q2:MaxValue>
          <q2:ThresholdType>BinaryInv</q2:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Threshold">
          <q2:ThresholdValue>84</q2:ThresholdValue>
          <q2:MaxValue>255</q2:MaxValue>
          <q2:ThresholdType>Binary</q2:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Resize">
          <q2:Size>
            <q2:Width>643</q2:Width>
            <q2:Height>513</q2:Height>
          </q2:Size>
          <q2:Interpolation>Linear</q2:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FindContours">
          <q2:Mode>External</q2:Mode>
          <q2:Method>ChainApproxNone</q2:Method>
          <q2:Offset>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:Offset>
          <q2:MinArea>200</q2:MinArea>
          <q2:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Undistort">
          <q2:Alpha>0</q2:Alpha>
          <q2:ComputeOptimalMatrix>false</q2:ComputeOptimalMatrix>
          <q2:FocalLength>
            <q2:X>1000</q2:X>
            <q2:Y>1000</q2:Y>
          </q2:FocalLength>
          <q2:PrincipalPoint>
            <q2:X>321.5</q2:X>
            <q2:Y>256.5</q2:Y>
          </q2:PrincipalPoint>
          <q2:RadialDistortion>
            <q2:X>-0.3</q2:X>
            <q2:Y>0</q2:Y>
            <q2:Z>0</q2:Z>
          </q2:RadialDistortion>
          <q2:TangentialDistortion>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:TangentialDistortion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FileCapture">
          <q2:FileName>color.avi</q2:FileName>
          <q2:PlaybackRate>0</q2:PlaybackRate>
          <q2:StartPosition>0</q2:StartPosition>
          <q2:PositionUnits>Frames</q2:PositionUnits>
          <q2:Loop>false</q2:Loop>
          <q2:Playing>true</q2:Playing>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Undistort, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Resize, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>